MATLABInstrumentDriver
FileVersion: 1.0
DriverName: C:\Program Files\MATLAB\R2006a\work\icontrol\agilent_4156_analyzer.mdd
DriverType: MATLAB interface object
InstrumentType: Semiconductor Parameter Analyzer
InstrumentManufacturer: HP/Agilent
InstrumentModel: 4145
InstrumentVersion: 1.0

CreateInitCode
  Code:
    function init(obj)
    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
    set(obj, 'Timeout', 10); % 10 seconds

    g = get(obj, 'Interface');

    fclose(g);

    % Increase BufferSizes to hold a lot of data
    %set(g, 'InputBufferSize', 1001*128*8+10);
    %set(g, 'OutputBufferSize', 1001*128*8+10);

    % Setup UserData
    g.UserData.Output = [0 0 0 0 0 0];
    g.UserData.Mode = upper({'Voltage','Voltage','Voltage','Voltage','Voltage','Voltage'});
    g.UserData.Voltage = [0 0 0 0 0 0];
    g.UserData.Current = 1e-3*[1 1 1 1 1 1]; % default to 1 mA

ConnectInitCode
  Code:
    function init(obj)
    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
    g = get(obj, 'Interface');

    fwrite(g, sprintf('US IT2 DR0 CA1 BC\n\r'));
    % then pause for 5s (critical)
    pause(5);

CleanupCode
  Code:
    function cleanup(obj)
    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
    % Return from user mode
    g = get(obj, 'Interface');
    fwrite(g, sprintf('DC1\n\r'));

    % Reset UserData
    g.UserData.Output = [0 0 0 0 0 0];
    g.UserData.Mode = upper({'Voltage','Voltage','Voltage','Voltage','Voltage','Voltage'});
    g.UserData.Voltage = [0 0 0 0 0 0];
    g.UserData.Current = 1e-3*[1 1 1 1 1 1]; % default to 1 mA

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

Group smu
  Size: 5
  Mappings
    ChannelMap Command="6" Index="5"
    ChannelMap Command="4" Index="4"
    ChannelMap Command="3" Index="3"
    ChannelMap Command="2" Index="2"
    ChannelMap Command="1" Index="1"

  Property Current
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % read current from UserData
      propertyValue = g.UserData.Current(CHANNEL);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % write current to UserData
      g.UserData.Current(CHANNEL) = propertyValue;

      if g.UserData.Output(CHANNEL) > 0
          % turn on output switch
          %fprintf(g, 'CN %d', CHANNEL);

          % then check biasing mode
          Mode = upper(g.UserData.Mode{CHANNEL});
          voltage_mode = upper('V');
          current_mode = upper('C');
          switch Mode(1)
              case voltage_mode
                  vreq = g.UserData.Voltage(CHANNEL);
                  ilimit = g.UserData.Current(CHANNEL);
                  cmd = sprintf('DV%d,0,%7.5f,%7.6f\n\r',CHANNEL,vreq,ilimit);
                  fwrite(g, cmd);
              case current_mode
                  vlimit = g.UserData.Voltage(CHANNEL);
                  ireq = g.UserData.Current(CHANNEL);
                  cmd = sprintf('DI%d,0,%7.5f,%7.6f\n\r',CHANNEL,ireq,vlimit);
                  fwrite(g, cmd);
          end
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % get the mode of CHANNEL

      propertyValue = g.UserData.Mode{CHANNEL};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % set the mode of CHANNEL

      g.UserData.Mode{CHANNEL} = propertyValue;

      if g.UserData.Output(CHANNEL) > 0
          % turn on output switch
          %fprintf(g, 'CN %d', CHANNEL);

          % then check biasing mode
          Mode = upper(g.UserData.Mode{CHANNEL});
          voltage_mode = upper('V');
          current_mode = upper('C');
          switch Mode(1)
              case voltage_mode
                  vreq = g.UserData.Voltage(CHANNEL);
                  ilimit = g.UserData.Current(CHANNEL);
                  cmd = sprintf('DV%d,0,%7.5f,%7.6f\n\r',CHANNEL,vreq,ilimit);
                  fwrite(g, cmd);
              case current_mode
                  vlimit = g.UserData.Voltage(CHANNEL);
                  ireq = g.UserData.Current(CHANNEL);
                  cmd = sprintf('DI%d,0,%7.5f,%7.6f\n\r',CHANNEL,ireq,vlimit);
                  fwrite(g, cmd);
          end
      end
    PermissibleType: String none
    DefaultValue: VOLTAGE
    ReadOnly: never

  Property Output
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % get UserData
      propertyValue = g.UserData.Output(CHANNEL);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % decode argument
      if isa(propertyValue,'char')
          switch upper(propertyValue)
              case 'ON'
                  outp = 1;
              case 'OFF'
                  outp = 0;
          end
      else
          outp = propertyValue;
      end

      % update UserData
      g.UserData.Output(CHANNEL) = outp;

      if outp > 0
          % turn on output switch
          %fprintf(g, 'CN %d', CHANNEL);

          % then check biasing mode
          Mode = upper(g.UserData.Mode{CHANNEL});
          voltage_mode = upper('V');
          current_mode = upper('C');
          switch Mode(1)
              case voltage_mode
                  vreq = g.UserData.Voltage(CHANNEL);
                  ilimit = g.UserData.Current(CHANNEL);
                  cmd = sprintf('DV%d,0,%7.5f,%7.6f\n\r',CHANNEL,vreq,ilimit);
                  fwrite(g, cmd);
              case current_mode
                  vlimit = g.UserData.Voltage(CHANNEL);
                  ireq = g.UserData.Current(CHANNEL);
                  cmd = sprintf('DI%d,0,%7.5f,%7.6f\n\r',CHANNEL,ireq,vlimit);
                  fwrite(g, cmd);
          end
      else
          % turn off output switch
          %fprintf(g, 'CL %d', CHANNEL);
          cmd = sprintf('DV%d;',CHANNEL);
          fprintf(g, cmd);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Voltage
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % read voltage from UserData
      propertyValue = g.UserData.Voltage(CHANNEL);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % write voltage to UserData
      g.UserData.Voltage(CHANNEL) = propertyValue;

      if g.UserData.Output(CHANNEL) > 0
          % turn on output switch
          %fprintf(g, 'CN %d', CHANNEL);

          % then check biasing mode
          Mode = upper(g.UserData.Mode{CHANNEL});
          voltage_mode = upper('V');
          current_mode = upper('C');
          switch Mode(1)
              case voltage_mode
                  vreq = g.UserData.Voltage(CHANNEL);
                  ilimit = g.UserData.Current(CHANNEL);
                  cmd = sprintf('DV%d,0,%7.5f,%7.6f\n\r',CHANNEL,vreq,ilimit);
                  fwrite(g, cmd);
              case current_mode
                  vlimit = g.UserData.Voltage(CHANNEL);
                  ireq = g.UserData.Current(CHANNEL);
                  cmd = sprintf('DI%d,0,%7.5f,%7.6f\n\',CHANNEL,ireq,vlimit);
                  fwrite(g, cmd);
          end
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method MeasCurrent
    MCode:
      function out = MeasCurrent(obj)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      if g.UserData.Output(CHANNEL)>0
          fwrite(g, sprintf('TI%d\n\r', CHANNEL));
          str = fscanf(g, '%s');
          out = sscanf(str(4:end), '%g');
      else
          out = 0;
      end

  Method MeasVoltage
    MCode:
      function out = MeasVoltage(obj)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      if g.UserData.Output(CHANNEL)>0
          fwrite(g, sprintf('TV%d\n\r', CHANNEL));
          str = fscanf(g, '%s');
          out = sscanf(str(4:end), '%g');
      else
          out = 0;
      end
