MATLABInstrumentDriver
FileVersion: 1.0
DriverName: C:\Program Files\MATLAB\R2006a\work\icontrol\agilent_4156_analyzer.mdd
DriverType: MATLAB interface object
InstrumentType: Semiconductor Parameter Analyzer
InstrumentManufacturer: HP/Agilent
InstrumentModel: 4156
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
  Code:
    function init(obj)
    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
    % Increase Timeout since a sweep can take several minutes
    set(obj, 'Timeout', 3*60); % 3 minutes

    g = get(obj, 'Interface');
    fclose(g);

    % Increase BufferSizes to hold a lot of data
    set(g, 'InputBufferSize', 1001*128*8+10);
    set(g, 'OutputBufferSize', 1001*128*8+10);

ConnectInitCode
  Code:
    function init(obj)
    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
    g = get(obj, 'Interface');

    % Reset instrument
    fprintf(g, '*RST');

    % Transfer method
    fprintf(g, ':FORM:BORD SWAP'); % Swap byte order for PC-compatibility
    fprintf(g, ':FORM REAL'); % Use binary IEEE-64bit for transfers

    % Clean all channel-definitions
    fprintf(g, ':PAGE:CHAN:ALL:DIS');

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property IntegrationTime
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      fprintf(g, ':PAGE:MEAS:MSET:ITIM?');
      str = fscanf(g, '%s');

      switch str
          case 'SHOR'
              propertyValue = 'short';
          case 'LONG'
              propertyValue = 'long';
          case 'MED'
              propertyValue = 'medium';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      switch lower(propertyValue)
          case 'short'
              str = 'SHOR';
          case 'long'
              str = 'LONG';
          case 'medium'
              str = 'MED';
      end

      fprintf(g, ':PAGE:MEAS:MSET:ITIM %s', str);
    PermissibleType: String none
    ReadOnly: never

  Property MeasurementMode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      fprintf(g, ':PAGE:CHAN:MODE?');
      str = fscanf(g, '%s');

      switch str
          case 'SWE'
              propertyValue = 'sweep';
          case 'SAMP'
              propertyValue = 'sampling';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      switch lower(propertyValue)
          case 'sweep'
              str = 'SWE';
          case 'sampling'
              str = 'SAMP';
      end

      fprintf(g, ':PAGE:CHAN:MODE %s', str);
    PermissibleType: String none
    ReadOnly: never

  Property XName
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      fprintf(g, ':PAGE:DISP:GRAP:X:NAME?');
      propertyValue = fscanf(g, '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      fprintf(g, ':PAGE:DISP:GRAP:X:NAME ''%s''', propertyValue);
    PermissibleType: String none
    ReadOnly: never

  Property Y1Name
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      fprintf(g, ':PAGE:DISP:GRAP:Y1:NAME?');
      propertyValue = fscanf(g, '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      fprintf(g, ':PAGE:DISP:GRAP:Y1:NAME ''%s''', propertyValue);
    PermissibleType: String none
    ReadOnly: never

  Property Y2Name
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      fprintf(g, ':PAGE:DISP:GRAP:Y2:NAME?');
      propertyValue = fscanf(g, '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      fprintf(g, ':PAGE:DISP:GRAP:Y2:NAME ''%s''', propertyValue);
    PermissibleType: String none
    ReadOnly: never

  Method Measure
    MCode:
      function data = Measure(obj)
      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
      % Measure...
      invoke(obj, 'Single');

      % and read data
      data = invoke(obj, 'Read');

  Method Read
    MCode:
      function data = Read(obj, varargin)
      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
      g = get(obj, 'Interface');

      if nargin == 1
          % read all variables
          data = struct;
          variables = invoke(obj, 'Variables');
          for k = 1:length(variables)
              fprintf(g, ':DATA? %s', variables {k});
              tmp = read_double(g);
              data = setfield(data, variables{k}, tmp);
          end
      else
          % read a specific variable
          fprintf(g, ':DATA? %s', varargin{1});
          data = read_double(g);
      end

  Method Single
    MCode:
      function out = Single(obj)
      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
      g = get(obj, 'Interface');

      fprintf(g, '*CLS'); % clear status register
      fprintf(g, '*SRE 32'); % listen to ESB-events
      fprintf(g, '*ESE 1'); % enable serial polling of OPC

      fprintf(g, ':PAGE:SCON:SING'); % trigger a measurement

      fprintf(g, '*OPC'); % monitor pending operations

      % serial poll
      out = spoll(g); % serial poll of OPC.

  Method Variables
    MCode:
      function vars = Variables(obj)
      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
      g = get(obj, 'Interface');

      fprintf(g, ':DATA:CAT?');
      str = fscanf(g, '%s');
      tmp = textscan(str,'%s','delimiter',',');
      data = tmp{1};

      n = 0;
      for k = 1:length(data)
          item = data(k);
          if item{1} ~= '@'
              constants = (length(item) == 1) & (ismember(item{1}, {'k','e','q'}));
              if ~constants
                  n = n + 1;
                  vars(n) = item;
              end
          end
      end

Group smu
  Size: 5
  Mappings
    ChannelMap Command="SMU5" Index="5"
    ChannelMap Command="SMU4" Index="4"
    ChannelMap Command="SMU3" Index="3"
    ChannelMap Command="SMU2" Index="2"
    ChannelMap Command="SMU1" Index="1"

  Property ConstantCompliance
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      fprintf(g, ':PAGE:MEAS:CONS:%s:COMP?', ID);
      propertyValue = fscanf(g, '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      cstr = sprintf(':PAGE:MEAS:CONS:%s:COMP %g', ID, propertyValue);
      fprintf(g, cstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property ConstantSource
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      fprintf(g, ':PAGE:MEAS:CONS:%s?', ID);
      propertyValue = fscanf(g, '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      cstr = sprintf(':PAGE:MEAS:CONS:%s %g', ID, propertyValue);
      fprintf(g, cstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property CurrentName
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      fprintf(g, ':PAGE:CHAN:%s:INAM?', ID);
      propertyValue = fscanf(g, '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');
      INAME = propertyValue(1:min(length(propertyValue),6)); % Max 6 character long

      cstr = sprintf(':PAGE:CHAN:%s:INAM ''%s''', ID, INAME);
      fprintf(g, cstr);
    PermissibleType: String none
    ReadOnly: never

  Property Function
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      fprintf(g, ':PAGE:CHAN:%s:FUNC?', ID);
      str = fscanf(g, '%s');

      switch str
          case 'VAR1'
              propertyValue = 'Var1';
          case 'VAR2'
              propertyValue = 'Var2';
          case 'VARD'
              propertyValue = 'Var1d';
          case 'CONS'
              propertyValue = 'Constant';
          otherwise
              propertyValue = 'Disabled';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      switch lower(propertyValue)
          case 'var1'
              str = 'VAR1';
          case 'var2'
              str = 'VAR2';
          case 'var1d'
              str = 'VARD';
          case 'constant'
              str = 'CONS';
      end

      cstr = sprintf(':PAGE:CHAN:%s:FUNC %s', ID, str);
      fprintf(g, cstr);
    PermissibleType: String none
    ReadOnly: never

  Property Mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      fprintf(g, ':PAGE:CHAN:%s:MODE?', ID);
      str = fscanf(g, '%s');

      switch str
          case 'V'
              propertyValue = 'Voltage';
          case 'I'
              propertyValue = 'Current';
          case 'VPUL'
              propertyValue = 'Voltage pulse';
          case 'IPUL'
              propertyValue = 'Current pulse';
          case 'COMM'
              propertyValue = 'Common';
          otherwise
              propertyValue = 'Disabled';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      switch lower(propertyValue)
          case 'voltage'
              str = 'V';
          case 'current'
              str = 'I';
          case 'voltage pulse'
              str = 'VPUL';
          case 'current pulse'
              str = 'IPUL';
          case 'common'
              str = 'COMM';
      end

      cstr = sprintf(':PAGE:CHAN:%s:MODE %s', ID, str);
      fprintf(g, cstr);
    PermissibleType: String none
    ReadOnly: never

  Property Standby
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      fprintf(g, ':PAGE:CHAN:%s:STAN?', ID);
      propertyValue = fscanf(g, '%d');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      cstr = sprintf(':PAGE:CHAN:%s:STAN %d', ID, propertyValue);
      fprintf(g, cstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property VoltageName
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      fprintf(g, ':PAGE:CHAN:%s:VNAM?', ID);
      propertyValue = fscanf(g, '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');
      VNAME = propertyValue(1:min(length(propertyValue),6)); % Max 6 character long

      cstr = sprintf(':PAGE:CHAN:%s:VNAM ''%s''', ID, VNAME);
      fprintf(g, cstr);
    PermissibleType: String none
    ReadOnly: never

  Method Disable
    MCode:
      function Disable(obj)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      cstr = sprintf(':PAGE:CHAN:%s:DIS', ID);
      fprintf(g, cstr);

Group var
  Size: 3
  Mappings
    ChannelMap Command="CONST" Index="3"
    ChannelMap Command="VAR2" Index="2"
    ChannelMap Command="VAR1" Index="1"

  Property Compliance
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      fprintf(g, ':PAGE:MEAS:%s:COMP?', ID);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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

      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      cstr = sprintf(':PAGE:MEAS:%s:COMP %g', ID, propertyValue);
      fprintf(g, cstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Points
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      switch ID
          case 'VAR1'
              start = get(obj, 'Start');
              stop = get(obj, 'Stop');
              step = get(obj, 'Step');
              % Use the algorithm of the 4156...
              propertyValue = floor(1 + abs((stop - start)/step));
          case 'VAR2'
              fprintf(g, ':PAGE:MEAS:VAR2:POIN?');
              propertyValue = fscanf(g, '%d');
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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

      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      switch ID
          case 'VAR1'
              start = get(obj, 'Start');
              stop = get(obj, 'Stop');
              % Use the algorithm of the 4156...
              step = (stop - start) / (round(propertyValue) - 1);
              cstr = sprintf(':PAGE:MEAS:VAR1:STEP %g', step);
              fprintf(g, cstr);
          case 'VAR2'
              cstr = sprintf(':PAGE:MEAS:VAR2:POIN %d', propertyValue);
              fprintf(g, cstr);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property PowerCompliance
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      % check if power compliance is activated
      fprintf(g, ':PAGE:MEAS:%s:PCOM:STAT?', ID);
      pstat = fscanf(g, '%d');

      % return setting if activated
      if pstat == 1
          fprintf(g, ':PAGE:MEAS:%s:PCOM?', ID);
          propertyValue = fscanf(g, '%g');
      else
          % return 0 otherwise
          propertyValue = 0;
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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

      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      if abs(propertyValue) > 0
          % set power compliance
          cstr = sprintf(':PAGE:MEAS:%s:PCOM %g', ID, propertyValue);
          fprintf(g, cstr);
      else
          % disable power compliance
          cstr = sprintf(':PAGE:MEAS:%s:PCOM:STAT OFF', ID);
          fprintf(g, cstr);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Start
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      fprintf(g, ':PAGE:MEAS:%s:STAR?', ID);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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

      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      cstr = sprintf(':PAGE:MEAS:%s:STAR %g', ID, propertyValue);
      fprintf(g, cstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Step
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      fprintf(g, ':PAGE:MEAS:%s:STEP?', ID);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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

      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      cstr = sprintf(':PAGE:MEAS:%s:STEP %g', ID, propertyValue);
      fprintf(g, cstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Stop
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      switch ID
          case 'VAR1'
              fprintf(g, ':PAGE:MEAS:VAR1:STOP?');
              propertyValue = fscanf(g, '%g');
          case 'VAR2'
              start = get(obj, 'Start');
              step = get(obj, 'Step');
              points = get(obj, 'Points');
              propertyValue = start + step*(points - 1);
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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

      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      stop = propertyValue;
      switch ID
          case 'VAR1'
              cstr = sprintf(':PAGE:MEAS:VAR1:STOP %g', stop);
              fprintf(g, cstr);
          case 'VAR2'
              start = get(obj, 'Start');
              step = get(obj, 'Step');
              % Stupid HP5146 algorithm...
              points = floor(1 + abs((stop - start)/step));
              if points > 128
                  % Maximum number of points 128
                  points = 128;
                  % Increase step.
                  step = (stop - start)/(points - 1);
                  set(obj, 'Step', step);
              else
                  cstr = sprintf(':PAGE:MEAS:VAR2:POIN %d', points);
                  fprintf(g, cstr);
              end
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property SweepMode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      switch ID
          case 'VAR1'
              fprintf(g, ':PAGE:MEAS:VAR1:MODE?');
              str = fscanf(g, '%s');
          case 'VAR2'
              str = 'SING';
      end

      switch str
          case 'SING'
              propertyValue = 'Single';
          case 'DOUB'
              propertyValue = 'Double';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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

      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      switch lower(propertyValue)
          case 'single'
              str = 'SING';
          case 'double'
              str = 'DOUB';
      end

      switch ID
          case 'VAR1'
              fprintf(g, ':PAGE:MEAS:VAR1:MODE %s', str);
          case 'VAR2'
              warning('VAR2 only supports "Single" sweep.');
      end
    PermissibleType: String none
    ReadOnly: never

  Property SweepType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      switch ID
          case 'VAR1'
              fprintf(g, ':PAGE:MEAS:VAR1:SPAC?');
              str = fscanf(g, '%s');
          case 'VAR2'
              str = 'LIN';
      end

      switch str
          case 'LIN'
              propertyValue = 'Linear';
          case 'L10'
              propertyValue = 'Logarithmic 10';
          case 'L25'
              propertyValue = 'Logarithmic 25';
          case 'L50'
              propertyValue = 'Logarithmic 50';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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

      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      switch lower(propertyValue)
          case 'linear'
              str = 'LIN';
          case 'logarithmic 10'
              str = 'L10';
          case 'logarithmic 25'
              str = 'L25';
          case 'logarithmic 50'
              str = 'L50';
      end

      switch ID
          case 'VAR1'
              fprintf(g, ':PAGE:MEAS:VAR1:SPAC %s', str);
          case 'VAR2'
              warning('VAR2 only supports "Linear" sweep.');
      end
    PermissibleType: String none
    ReadOnly: never

Group Vmu
  Size: 2
  Mappings
    ChannelMap Command="VMU2" Index="2"
    ChannelMap Command="VMU1" Index="1"

  Property Mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      fprintf(g, ':PAGE:CHAN:%s:MODE?', ID);
      str = fscanf(g, '%s');

      switch str
          case 'V'
              propertyValue = 'Voltage';
          otherwise
              propertyValue = 'Disabled';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      switch lower(propertyValue)
          case 'voltage'
              str = 'V';
          case 'diffvoltage'
              str = 'DVOL'
      end

      cstr = sprintf(':PAGE:CHAN:%s:MODE %s', ID, str);
      fprintf(g, cstr);
    PermissibleType: Double none
    ReadOnly: never

  Property VoltageName
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      fprintf(g, ':PAGE:CHAN:%s:VNAM?', ID);
      propertyValue = fscanf(g, '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');
      VNAME = propertyValue(1:min(length(propertyValue),6)); % Max 6 character long

      cstr = sprintf(':PAGE:CHAN:%s:VNAM ''%s''', ID, VNAME);
      fprintf(g, cstr);
    PermissibleType: Double none
    ReadOnly: never

  Method Disable
    MCode:
      function Disable(obj)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      ID = get(obj, 'HwName');

      cstr = sprintf(':PAGE:CHAN:%s:DIS', ID);
      fprintf(g, cstr);
