MATLABInstrumentDriver
FileVersion: 1.0
DriverName: C:\Program Files\MATLAB\R2006a\work\icontrol\agilent_4395a.mdd
DriverType: MATLAB interface object
InstrumentType: Vector Network Analyzer
InstrumentManufacturer: Agilent
InstrumentModel: 4395A
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
  Code:
    function init(obj)
    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
    % Increase Timeout since a sweep can take several minutes
    set(obj, 'Timeout', 10*60); % 10 minutes

    g = get(obj, 'Interface');
    fclose(g);

    % Increase BufferSize to hold a lot of data
    set(g, 'InputBufferSize', 2*15*801+10); % Complex 801 points ASCII-data
    set(g, 'OutputBufferSize', 2*15*801+10); % Complex 801 points ASCII-data

ConnectInitCode
  Code:
    function init(obj)
    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
    g = get(obj, 'Interface');

    %fprintf(g, '*RST');

    fprintf(g, 'HOLD 1');

CleanupCode
  Code:
    function cleanup(obj)
    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
    g = get(obj, 'Interface');

    %fprintf(g, '*RST');

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property Average
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Query averaging-status
      fprintf(g, 'AVER?');
      averon = fscanf(g, '%d');

      if averon == 0
          % if averaging is off then report 1
          propertyValue = 1;
      else
          fprintf(g, 'AVERFACT?');
          propertyValue = fscanf(g, '%d');
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      if propertyValue <= 1
          % if averaging is set to 1 then turn averaging off
          fprintf(g, 'AVER 0');
          fprintf(g, 'AVERFACT 1'); % but also set averaging to 1
      else
          % else tunr averaging on...
          fprintf(g, 'AVER 1');
          fprintf(g, 'AVERFACT %d', propertyValue);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Correction
    Type: InstrumentCommand
    ConfigureCommand: CORR
    QueryCommand: CORR?
    PermissibleType: Double bounded [Max="1.0" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never

  Property CorrectionType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Query correction type
      fprintf(g, 'CALI?');
      caltype = fscanf(g, '%s');
      % Possible answers
      types = {'NONE','RESP','RAI','S111','S221','FUL2','ONE2','IMP'};
      [void, index]=intersect(types, caltype);

      switch index
          case 1
              propertyValue = 'None';
          case 4
              propertyValue = '1-port S11';
          case 5
              propertyValue = '1-port S22';
          case 6
              propertyValue = '2-port';
          otherwise
              propertyValue = 'Unknown';
      end
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property Hold
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Query if we have HOLD or CONT
      fprintf(g, 'HOLD?');
      propertyValue = fscanf(g, '%d');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      %
      switch propertyValue
          case 0
              fprintf(g, 'CONT');
          case 1
              fprintf(g, 'HOLD');
      end
    PermissibleType: Double bounded [Max="1.0" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never

  Property IFAutoBandwidth
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Query BWAuto
      fprintf(g, 'BWAUTO?');
      propertyValue = fscanf(g, '%d');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % Set BWAuto
      fprintf(g, 'BWAUTO %d', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property IFBandwidth
    Type: InstrumentCommand
    ConfigureCommand: BW
    QueryCommand: BW?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property IFBandwidthLimit
    Type: InstrumentCommand
    ConfigureCommand: BWLMT
    QueryCommand: BWLMT?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property NumFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Read frequency points
      fprintf(g,'POIN?');
      propertyValue = fscanf(g, '%d');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % Set frequency points
      fprintf(g,'POIN %d', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Source1Power
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Read RF Power
      fprintf(g, 'POWE?');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % Set RF Power
      fprintf(g, 'POWE %g', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Source2Power
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Read RF Power
      fprintf(g, 'POWE?');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % Set RF Power
      fprintf(g, 'POWE %g', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property StartFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Read start frequency
      fprintf(g,'STAR?');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % Set start frequency
      fprintf(g,'STAR %g HZ', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property StopFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Read start frequency
      fprintf(g,'STOP?');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % Set stop frequency
      fprintf(g,'STOP %g HZ', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property SweepType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Read type of frequency sweep
      fprintf(g,'SWPT?');
      str = fscanf(g, '%s');

      switch str
          case 'LINF'
              propertyValue = 'Linear';
          case 'LOGF'
              propertyValue = 'Logarithmic';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % set type of frequency sweep

      switch propertyValue
          case 'Linear'
              str = 'LINF';
          case 'Logarithmic'
              str = 'LOGF';
          case 'List'
              error('This instrument does not support frequency lists.');
          otherwise
              error('Unknown sweep type.');
      end

      fprintf(g, 'SWPT %s', str);
    PermissibleType: String enum [Linear=Linear, Logarithmic=Logarithmic, List=List]
    DefaultValue: Linear
    ReadOnly: never

  Method Freq
    MCode:
      function frequencies = Freq(obj)
      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
      g = get(obj, 'Interface');

      % Get frequency list
      fprintf(g, 'FORM5;OUTPSWPRM?');
      frequencies = read_form5(g);
      %str = fscanf(g, '%s');
      % parse ASCII-data
      %data = textscan(str, '%f', 'Delimiter', ',');
      %frequencies = data{1};

  Method Measure
    MCode:
      function xp = Measure(obj)
      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
      % First check calibration type
      caltype = get(obj, 'CorrectionType');
      % Then perform a suitable measurement
      switch caltype
          case '1-port S11'
              invoke(obj, 'SingleSweep');
              s(1,1,:) = invoke(obj, 'Read', 'S11');
              freq = invoke(obj, 'Freq');
              xp = xparam(s, 'S', 50, freq);
          case '1-port S22'
              invoke(obj, 'SingleSweep');
              s(1,1,:) = invoke(obj, 'Read', 'S22');
              freq = invoke(obj, 'Freq');
              xp = xparam(s, 'S', 50, freq);
          case '2-port'
              invoke(obj, 'SingleSweep');
              s(1,1,:) = invoke(obj, 'Read', 'S11');
              s(2,1,:) = invoke(obj, 'Read', 'S21');
              s(1,2,:) = invoke(obj, 'Read', 'S12');
              s(2,2,:) = invoke(obj, 'Read', 'S22');
              freq = invoke(obj, 'Freq');
              xp = xparam(s, 'S', 50, freq);
          otherwise
              invoke(obj, 'SingleSweep');
              s(1,1,:) = invoke(obj, 'Read', 'S11');
              invoke(obj, 'SingleSweep');
              s(2,1,:) = invoke(obj, 'Read', 'S21');
              invoke(obj, 'SingleSweep');
              s(1,2,:) = invoke(obj, 'Read', 'S12');
              invoke(obj, 'SingleSweep');
              s(2,2,:) = invoke(obj, 'Read', 'S22');
              freq = invoke(obj, 'Freq');
              xp = xparam(s, 'S', 50, freq);
      end

  Method Read
    MCode:
      function out = Read(obj, parameter)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'MEAS %s;', parameter);
      fprintf(g, 'FORM5;OUTPDATA?');
      data = read_form5(g);
      %str = fscanf(g,'%s');
      % parse ASCII-data
      %data = textscan(str, '%f', 'Delimiter', ',');
      %data = data{1};
      % convert to complex

      out = data(1:2:end)+j*data(2:2:end);

  Method SingleSweep
    MCode:
      function out = SingleSweep(obj)
      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
      g = get(obj, 'Interface');

      % setup for serial-poll
      fprintf(g, 'CLES');
      fprintf(g, 'ESNB 1');
      fprintf(g, '*SRE 4');

      % trigger single sweep
      fprintf(g, 'SING;');

      % serial poll
      out = spoll(g);
