MATLABInstrumentDriver
FileVersion: 1.0
DriverName: C:\Program Files\MATLAB\R2006a\work\icontrol\agilent_66xxx_single.mdd
DriverType: MATLAB interface object
InstrumentType: DC Power Supply
InstrumentManufacturer: Agilent
InstrumentModel: 664xA, 665xA, 667xA, 668xA
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
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
ConnectInitCode
  Code:
    function init(obj)
    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
    % get Interface object.
    g = get(obj, 'Interface');

    % Set the instrument in a known state.
    fprintf(g, '*RST');

    % Turn off Output.
    fprintf(g, 'OUTP 0');

CleanupCode
  Code:
    function cleanup(obj)
    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
    % get Interface object.
    g = get(obj, 'Interface');

    % Turn off Output.
    fprintf(g, 'OUTP 0');

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property ActiveChannel
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      propertyValue = 1;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Channels
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % This driver is for single-channel DC-supplies

      propertyValue = 1;
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    PermissibleType: Double none
    DefaultValue: 1
    ReadOnly: always

  Property Current
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % Get current setting
      fprintf(g, 'CURRENT?');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % Set current setting
      fprintf(g, 'CURRENT %g', abs(propertyValue));
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Output
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % Check if the Output is on or off
      fprintf(g, 'OUTP?');
      propertyValue = fscanf(g, '%d');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % Set the Output to on or off

      if isa(propertyValue,'char')
          switch upper(propertyValue)
              case 'ON'
                  outp = 1;
              case 'OFF'
                  outp = 0;
          end
      else
          outp = propertyValue;
      end

      % Set the Output-state
      fprintf(g, 'OUTP %d', outp);
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0
    ReadOnly: never

  Property Voltage
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % Get voltage setting
      fprintf(g, 'VOLTAGE?');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % Set voltage setting
      fprintf(g, 'VOLTAGE %g',abs(propertyValue));
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method MeasCurrent
    MCode:
      function iout = MeasCurrent(obj)
      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
      % get Interface object.
      g = get(obj, 'Interface');

      % Measure Current.
      fprintf(g, 'MEAS:CURRENT?');
      iout = fscanf(g, '%g');

  Method MeasVoltage
    MCode:
      function vout = MeasVoltage(obj)
      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
      % get Interface object.
      g = get(obj, 'Interface');

      % Measure Voltage.
      fprintf(g, 'MEAS:VOLTAGE?');
      vout = fscanf(g, '%g');
