MATLABInstrumentDriver
FileVersion: 1.0
DriverName: C:\Program Files\MATLAB\R2006a\work\icontrol\agilent_4395a.mdd
DriverType: MATLAB interface object
InstrumentType: Vector Network Analyzer
InstrumentManufacturer: Agilent
InstrumentModel: PNA-series
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: SYSTEM:ERROR?

CreateInitCode
  Code:
    function init(obj)
    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
    % Increase Timeout since a sweep can take several minutes
    %set(obj, 'Timeout', 10*60); % 10 minutes

    g = get(obj, 'Interface');
    fclose(g);

    % Increase BufferSize to hold a lot of data
    set(g, 'InputBufferSize', 2*15*1601+10); % Complex 1601 points ASCII-data
    set(g, 'OutputBufferSize', 2*15*1601+10); % Complex 1601 points ASCII-data

ConnectInitCode
  Code:
    function init(obj)
    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
    g = get(obj, 'Interface');

    % clear status
    fprintf(g, '*CLS');

    % set byte order for binary transfers
    fprintf(g, 'FORM:BORD SWAP');

    % set the sweep to hold
    set(obj, 'Hold', 1);

    % define measurements
    invoke(obj, 'DefineMeasurements');

CleanupCode
  Code:
    function cleanup(obj)
    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
    g = get(obj, 'Interface');

    fprintf(g, '*CLS');

    % set the sweep to continuous and internal trigger
    set(obj, 'Hold', 0);
    set(obj, 'Trigger', 'internal');

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property Average
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      channel = 1; % the PNA supports multiple channels

      cmdstr = sprintf('SENSE%d:AVERAGE:STATE?', channel);
      fprintf(g, cmdstr);
      averon = fscanf(g, '%d');

      if averon == 1
          % query average if on
          cmdstr = sprintf('SENSE%d:AVERAGE:COUNT?', channel);
          fprintf(g, cmdstr);
          aver = fscanf(g, '%g');
      else
          % else return 0
          aver = 0;
      end

      propertyValue = aver;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      channel = 1; % the PNA supports multiple channels

      if propertyValue <= 1
          % if averaging is set to 1 then turn averaging off
          cmdstr = sprintf('SENSE%d:AVERAGE:STATE OFF', channel);
          fprintf(g, cmdstr);

          cmdstr = sprintf('SENSE%d:AVERAGE:COUNT %d', channel, 1);
          fprintf(g, cmdstr); % but also set averaging to 1

      else
          % else set number of averages
          cmdstr = sprintf('SENSE%d:AVERAGE:COUNT %d', channel, propertyValue);
          fprintf(g, cmdstr);

          % and turn averaging on
          cmdstr = sprintf('SENSE%d:AVERAGE:STATE ON', channel);
          fprintf(g, cmdstr);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Correction
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      channel = 1; % PNA supports multiple channels

      cmdstr = sprintf('SENSE%d:CORRECTION:STATE?', channel);
      fprintf(g, cmdstr);
      calstat = fscanf(g, '%d');

      if calstat > 0
          cmdstr = sprintf('SENSE%d:CORRECTION:CSET:NAME?', channel);
          fprintf(g, cmdstr);

          cmdstr = fscanf(g);
          calstat = sscanf(cmdstr,'cset%d.csa');

          if isempty(calstat)
              calstat = cmdstr;
          end

      end

      propertyValue = calstat;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      channel = 1; % PNA supports multiple channels

      if propertyValue == 0
          cmdstr = sprintf('SENSE%d:CORRECTION:STATE OFF', channel);
          fprintf(g, cmdstr);
      else
          % use the argument as the calset number
          % recall calset
      	cmdstr = sprintf('MMEM:LOAD:CSAR ''cset%d.csa''', propertyValue);
          fprintf(g, cmdstr);
          % activate calset
          cmdstr = sprintf('SENSE%d:CORRECTION:STATE ON; *WAI', channel);
          fprintf(g, cmdstr);
      end
    PermissibleType: Double none
    DefaultValue: 0.0
    ReadOnly: never

  Property CorrectionType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % Query correction type
      cmdstr = sprintf('SENS%d:CORR:CSET:TYPE:CAT?', channel);
      fprintf(g, cmdstr);
      caltype = fscanf(g);
      % Possible answers
      types = {'Full 2 Port','Full 1 Port(1)','Full 1 Port(2)'};

      if strfind(caltype, types{1});
          propertyValue = '2-port';
      elseif strfind(caltype, types{2});
          propertyValue = '1-port S11';
      elseif strfind(caltype, types{3});
          propertyValue = '1-port S22';
      else
          propertyValue = 'Unknown';
      end
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property Detector
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      propertyValue = 'normal'
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    PermissibleType: String none
    ReadOnly: never

  Property Domain
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      propertyValue = 'frequency';
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    PermissibleType: String none
    ReadOnly: never

  Property Hold
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % Query if we have HOLD or CONT
      cmdstr = sprintf('SENSE%d:SWEEP:MODE?', channel);
      fprintf(g, cmdstr);
      str = fscanf(g, '%s');

      types = {'HOLD','CONT','GRO'};
      index = strmatch(str, types);

      switch index
          case 1
              propertyValue = 1;
          case 2
              propertyValue = 0;
          case 3
              propertyValue = 0;
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      channel = 1;
      %
      switch propertyValue
          case 0
              %fprintf(g, 'OUTPUT:STATE ON');
              cmdstr = sprintf('SENSE%d:SWEEP:MODE CONT', channel);
              fprintf(g, cmdstr);
          case 1
              %fprintf(g, 'OUTPUT:STATE OFF');
              cmdstr = sprintf('SENSE%d:SWEEP:MODE HOLD', channel);
              fprintf(g, cmdstr);
      end
    PermissibleType: Double none
    DefaultValue: 0.0
    ReadOnly: never

  Property NumFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % Read frequency points
      cmdstr = sprintf('SENSE%d:SWEEP:POINTS?', channel);
      fprintf(g, cmdstr);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % Set sweep points
      cmdstr = sprintf('SENSE%d:SWEEP:POINTS %d', channel, propertyValue);
      fprintf(g, cmdstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Port1Attenuator
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      channel = 1;

      cmdstr = sprintf('SOURCE%d:POWER1:ATT?', channel);
      fprintf(g, cmdstr);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      channel = 1;

      if propertyValue < 0
          % set to auto if less than 0
          cmdstr = sprintf('SOURCE%d:POWER1:ATT:AUTO ON', channel);
          fprintf(g, cmdstr);
      else
          cmdstr = sprintf('SOURCE%d:POWER1:ATT %g', channel, propertyValue);
          fprintf(g, cmdstr);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Port1Extension
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % Get port extension
      cmdstr = sprintf('SENS%d:CORR:EXT:PORT1:TIME', channel);
      fprintf(g, cmdstr);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % set Portextension at Port 1
      cmdstr = sprintf('SENS%d:CORR:EXT:PORT1:TIME %g', channel, propertyValue);
      fprintf(g, cmdstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Port2Attenuator
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      channel = 1;

      cmdstr = sprintf('SOURCE%d:POWER2:ATT?', channel);
      fprintf(g, cmdstr);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      channel = 1;

      if propertyValue < 0
          % set to auto if less than 0
          cmdstr = sprintf('SOURCE%d:POWER2:ATT:AUTO ON', channel);
          fprintf(g, cmdstr);
      else
          cmdstr = sprintf('SOURCE%d:POWER2:ATT %g', channel, propertyValue);
          fprintf(g, cmdstr);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Port2Extension
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Get port extension
      % Get port extension
      cmdstr = sprintf('SENS%d:CORR:EXT:PORT2:TIME', channel);
      fprintf(g, cmdstr);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % set Portextension at Port 2
      cmdstr = sprintf('SENS%d:CORR:EXT:PORT2:TIME %g', channel, propertyValue);
      fprintf(g, cmdstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Source1Power
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      channel = 1;

      cmdstr = sprintf('SOURCE%d:POWER1?', channel);
      fprintf(g, cmdstr);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      channel = 1;

      cmdstr = sprintf('SOURCE%d:POWER1 %g', channel, propertyValue);
      fprintf(g, cmdstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Source2Power
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      channel = 1;

      cmdstr = sprintf('SOURCE%d:POWER2?', channel);
      fprintf(g, cmdstr);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      channel = 1;

      cmdstr = sprintf('SOURCE%d:POWER2 %g', channel, propertyValue);
      fprintf(g, cmdstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property StartFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % Read start frequency
      cmdstr = sprintf('SENSE%d:FREQUENCY:START?', channel);
      fprintf(g, cmdstr);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % Set start frequency
      cmdstr = sprintf('SENSE%d:FREQUENCY:START %g', channel, propertyValue);
      fprintf(g, cmdstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property StopFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % Read stop frequency
      cmdstr = sprintf('SENSE%d:FREQUENCY:STOP?', channel);
      fprintf(g, cmdstr);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % Set stop frequency
      cmdstr = sprintf('SENSE%d:FREQUENCY:STOP %g', channel, propertyValue);
      fprintf(g, cmdstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property SweepType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % Read type of frequency sweep
      cmdstr = sprintf('SENS%d:SWE:TYPE?', channel);
      fprintf(g, cmdstr);
      str = fscanf(g);

      type = {'LIN','LOG','POW','CW','SEG'};

      if strfind(str,type{1})
          propertyValue = 'Linear';
      elseif strfind(str,type{2})
              propertyValue = 'Logarithmic';
      elseif strfind(str,type{3})
              propertyValue = 'Power';
      elseif strfind(str,type{4})
              propertyValue = 'Single';
      elseif strfind(str,type{5})
              propertyValue = 'List';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % set type of frequency sweep
      switch propertyValue
          case 'Linear'
              swpstr = 'LIN';
          case 'Logarithmic'
              swpstr = 'LOG';
          case 'Power'
              swpstr = 'POW';
          case 'Single'
              swpstr = 'CW';
          case 'List'
              swpstr = 'SEG';
          otherwise
              error('Unknown sweep type.');
      end

      cmdstr = sprintf('SENS%d:SWE:TYPE %s', channel, swpstr);
      fprintf(g, cmdstr);
    PermissibleType: String enum [Linear=Linear, Logarithmic=Logarithmic, List=List, Single=Single]
    DefaultValue: Linear
    ReadOnly: never

  Property Trigger
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'TRIGGER:SEQUENCE:SOURCE?');
      str = fscanf(g);

      type = {'EXT','IMM','MAN'};

      if strfind(str, type{1})
              propertyValue = 'external'
      elseif strfind(str, type{2})
              propertyValue = 'internal'
      elseif strfind(str, type{3})
              propertyValue = 'manual'
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      switch propertyValue
          case 'internal'
              trgstr = 'IMM';
          case 'external'
              trgstr = 'EXT';
          case 'manual'
              trgstr = 'MAN';
      end

      cmdstr = sprintf('TRIGGER:SEQUENCE:SOURCE %s', trgstr);
      fprintf(g, cmdstr);
    PermissibleType: String none
    ReadOnly: never

  Property TriggerDelay
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'TRIGER:DELAY?');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'TRIGGER:DELAY %g', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method DefineMeasurements
    MCode:
      function DefineMeasurements(obj)
      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
      g = get(obj, 'Interface');

      %
      % define measurements for S11, S21, S12 and S22
      %
      channel = 1;

      % get defined measurements
      cmdstr = sprintf('CALC%d:PAR:CAT?', channel);
      fprintf(g, cmdstr);
      parcatstr = fscanf(g, '%s');

      if isempty(strmatch('MY_S11', parcatstr))
          cmdstr = sprintf('CALC%d:PAR:DEF ''MY_S11'',S11', channel);
          fprintf(g, cmdstr);
      end
      if isempty(strmatch('MY_S21', parcatstr))
          cmdstr = sprintf('CALC%d:PAR:DEF ''MY_S21'',S21', channel);
          fprintf(g, cmdstr);
      end
      if isempty(strmatch('MY_S12', parcatstr))
          cmdstr = sprintf('CALC%d:PAR:DEF ''MY_S12'',S12', channel);
          fprintf(g, cmdstr);
      end
      if isempty(strmatch('MY_S22', parcatstr))
          cmdstr = sprintf('CALC%d:PAR:DEF ''MY_S22'',S22', channel);
          fprintf(g, cmdstr);
      end
      if isempty(strmatch('MY_GAMMA_FWD', parcatstr))
          cmdstr = sprintf('CALC%d:PAR:DEF ''MY_GAMMA_FWD'',R2B,1', channel);
          fprintf(g, cmdstr);
      end
      if isempty(strmatch('MY_GAMMA_REV', parcatstr))
          cmdstr = sprintf('CALC%d:PAR:DEF ''MY_GAMMA_REV'',R1A,2', channel);
          fprintf(g, cmdstr);
      end
      if isempty(strmatch('MY_A1A2', parcatstr))
          cmdstr = sprintf('CALC%d:PAR:DEF ''MY_A2A1'',R2R1,1', channel);
          fprintf(g, cmdstr);
      end
      if isempty(strmatch('MY_A2A1', parcatstr))
          cmdstr = sprintf('CALC%d:PAR:DEF ''MY_A1A2'',R1R2,2', channel);
          fprintf(g, cmdstr);
      end
      if isempty(strmatch('MY_S11R', parcatstr))
          cmdstr = sprintf('CALC%d:PAR:DEF ''MY_S11R'',AR1,1', channel);
          fprintf(g, cmdstr);
      end
      if isempty(strmatch('MY_S21R', parcatstr))
          cmdstr = sprintf('CALC%d:PAR:DEF ''MY_S21R'',BR1,1', channel);
          fprintf(g, cmdstr);
      end
      if isempty(strmatch('MY_S12R', parcatstr))
          cmdstr = sprintf('CALC%d:PAR:DEF ''MY_S12R'',AR2,2', channel);
          fprintf(g, cmdstr);
      end
      if isempty(strmatch('MY_S22R', parcatstr))
          cmdstr = sprintf('CALC%d:PAR:DEF ''MY_S22R'',BR2,2', channel);
          fprintf(g, cmdstr);
      end

  Method Freq
    MCode:
      function frequencies = Freq(obj)
      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
      g = get(obj, 'Interface');

      channel = 1;

      cmdstr = sprintf('SENS%d:SEGM:COUN?', channel);
      fprintf(g, cmdstr);
      count = fscanf(g, '%d');

      if count <= 1
         % single segment
         fstart = get(obj, 'StartFrequency');
         fstop = get(obj, 'StopFrequency');
         fpoints = get(obj, 'NumFrequency');
         frequencies = linspace(fstart, fstop, fpoints);
      else
         % multiple segments
         frequencies = [];
         % loop through each segment
         for segment = 1:count
             cmdstr = sprintf('SENS%d:SEGM%d:FREQ:STAR?', channel, segment);
             fprintf(g, cmdstr);
             fstart = fscanf(g, '%g');
             cmdstr = sprintf('SENS%d:SEGM%d:FREQ:STOP?', channel, segment);
             fprintf(g, cmdstr);
             fstop = fscanf(g, '%g');
             cmdstr = sprintf('SENS%d:SEGM%d:SWE:POIN?', channel, segment);
             fprintf(g, cmdstr);
             fpoints = fscanf(g, '%g');
             frequencies = [frequencies linspace(fstart, fstop, fpoints)];
         end
      end

  Method FreqList
    MCode:
      function FreqList(obj, freq)
      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
      % Load a frequency list into the VNA

      g = get(obj, 'Interface');

      channel = 1;

      num = length(freq);
      uniform = (length(unique(round(1e13*diff(freq)))) == 1); % resolution of 1 Hz

      % check if the frequency list is uniform
      if uniform
          % then use linear sweep
          set(obj, 'SweepType', 'Linear');
          set(obj, 'StartFrequency', min(freq));
          set(obj, 'StopFrequency', max(freq));
          set(obj, 'NumFrequency', num);
      else
          freq = sort(freq); % the frequency must be in increasing order
          num = length(freq);
          TOL = 1e-6;
          % parse the frequency list
          % check for continuous intervals
          idx = [];
          if num > 1
              step = freq(2) - freq(1);
              for k = 2:num
                  prev_step = step;
                  step = freq(k) - freq(k-1);
                  if abs(step - prev_step) > TOL
                      % step changed, only use points up to (k-1) for this segment
                      idx = [idx k-1];
                      if ((k+1) <= num)
                          step = freq(k+1) - freq(k);
                      end
                  end
              end
          else
              idx = 1;
          end
          % construct segments
          n = 1;
          for k = 1:length(idx)
              start_idx = n;
              stop_idx = idx(k);
              points = 1 + (stop_idx - start_idx);
              n = stop_idx + 1;
              segments(k,:) = [freq(start_idx) freq(stop_idx) points];
          end
          start_idx = n;
          stop_idx = num;
          points = 1 + (stop_idx - start_idx);
          segments(k+1,:) = [freq(start_idx) freq(stop_idx) points];

          % set to stepped mode and open segement editor
          cmdstr = sprintf('SENS%d:SWE:GEN STEP', channel);
          fprintf(g, cmdstr);
          cmdstr = sprintf('SENS%d:SWE:TYPE SEGM;*OPC?', channel);
          fprintf(g, cmdstr);
          opc = fscanf(g, '%d');
          % clear list
          cmdstr = sprintf('SENS%d:SEGM:DEL:ALL', channel);
          fprintf(g, cmdstr);

          % now upload the segments
          for k = 1:size(segments, 1)
              cmdstr = sprintf('SENS%d:SEGM%d:ADD;*OPC?', channel, k);
              fprintf(g, cmdstr);
              opc = fscanf(g, '%d');
              cmdstr = sprintf('SENS%d:SEGM%d:FREQ:STAR %9.6fHZ', channel, k, segments(k,1));
              fprintf(g, cmdstr);
              cmdstr = sprintf('SENS%d:SEGM%d:FREQ:STOP %9.6fHZ', channel, k, segments(k,2));
              fprintf(g, cmdstr);
              cmdstr = sprintf('SENS%d:SEGM%d:SWE:POIN %d', channel, k, segments(k,3));
              fprintf(g, cmdstr);
              cmdstr = sprintf('SENS%d:SEGM%d ON;*OPC?', channel, k);
              fprintf(g, cmdstr);
              opc = fscanf(g, '%d');
          end

      end

  Method Measure
    MCode:
      function xp = Measure(obj)
      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
      % First check calibration type
      caltype = get(obj, 'CorrectionType');
      % Then perform a suitable measurement
      switch caltype
          case '1-port S11'
              invoke(obj, 'SingleSweep');
              s(1,1,:) = invoke(obj, 'Read', 'S11');
              freq = invoke(obj, 'Freq');
              xp = xparam(s, 'S', 50, freq);
          case '1-port S22'
              invoke(obj, 'SingleSweep');
              s(1,1,:) = invoke(obj, 'Read', 'S22');
              freq = invoke(obj, 'Freq');
              xp = xparam(s, 'S', 50, freq);
          case '2-port'
              invoke(obj, 'SingleSweep');
              s(1,1,:) = invoke(obj, 'Read', 'S11');
              s(2,1,:) = invoke(obj, 'Read', 'S21');
              s(1,2,:) = invoke(obj, 'Read', 'S12');
              s(2,2,:) = invoke(obj, 'Read', 'S22');
              freq = invoke(obj, 'Freq');
              xp = xparam(s, 'S', 50, freq);
          otherwise
              invoke(obj, 'SingleSweep');
              s(1,1,:) = invoke(obj, 'Read', 'S11');
              invoke(obj, 'SingleSweep');
              s(2,1,:) = invoke(obj, 'Read', 'S21');
              invoke(obj, 'SingleSweep');
              s(1,2,:) = invoke(obj, 'Read', 'S12');
              invoke(obj, 'SingleSweep');
              s(2,2,:) = invoke(obj, 'Read', 'S22');
              freq = invoke(obj, 'Freq');
              xp = xparam(s, 'S', 50, freq);
      end

  Method Read
    MCode:
      function out = Read(obj, parameter)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % select measurement
      cmdstr = sprintf('CALC%d:PAR:SEL ''MY_%s'';*OPC?', channel, parameter);
      fprintf(g, cmdstr);
      opc = fscanf(g, '%d');

      % select binary format
      fprintf(g, 'FORM REAL,32');

      % request data
      cmdstr = sprintf('CALC%d:DATA? SDATA', channel);
      fprintf(g, cmdstr);

      % transfer binary data
      data = read_pna(g);

      out = data(1:2:end)+j*data(2:2:end);

  Method SingleSweep
    MCode:
      function out = SingleSweep(obj)
      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
      g = get(obj, 'Interface');

      channel = 1;

      % turn off sweep
      fprintf(g, 'INIT:CONT OFF;*OPC?');
      opc = fscanf(g, '%d');

      % setup for serial-poll
      fprintf(g, '*CLS;*WAI');

      % enable averaging monitor
      if get(obj, 'Average')
          % reset averaging
          cmdstr = sprintf('SENS%d:AVER:CLE', channel);
          fprintf(g, cmdstr);

          % get trace number
          % *FIXME* Agilent bug
          %cmdstr = sprintf('CALC%d:PAR:MNUM?', channel);
          %fprintf(g, cmdstr);
          %trace = fscanf(g, '%d');
          trace = 1;
          % calculate average register and weight for the current trace
          aver_ch = 1 + floor(trace/14);
          aver_weight = mod(trace, 14);
          % enable average monitor on current trace
          cmdstr = sprintf('STAT:OPER:AVER%d:ENAB %d', aver_ch, 2^aver_weight);
          % enable global average monitor
          fprintf(g, 'STAT:OPER:ENAB 256');
          % enable monitor
          fprintf(g, '*SRE 128');
          fprintf(g, '*ESE 0');
          % set to continual sweep and trigger
          set(obj, 'Hold', 0);
          set(obj, 'Trigger', 'internal');
          %cmdstr = sprintf('INIT%d:IMM', channel);
          %fprintf(g, cmdstr);
      else
          % enable OPC monitor
          fprintf(g, '*SRE 32');
          fprintf(g, '*ESE 1');
          % abort current sweep and issue a trigger-event and listen for OPC
          cmdstr = sprintf('ABOR;INIT%d:IMM;*OPC', channel);
          fprintf(g, cmdstr);
      end

      % serial poll
      out = [];
      while isempty(out)
          out = spoll(g);
      end

      % set to hold
      set(obj, 'Hold', 1);
