MATLABInstrumentDriver
FileVersion: 1.0
DriverName: C:\Program Files\MATLAB\R2006a\work\icontrol\agilent_4156_analyzer.mdd
DriverType: MATLAB interface object
InstrumentType: DC Power Supply
InstrumentManufacturer: Agilent
InstrumentModel: U2722A
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: *ESE?

CreateInitCode
  Code:
    function init(obj)
    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
    % get Interface object.
    g = get(obj, 'Interface');

    % Create UserData
    g.UserData.Mode = upper({'V','V','V'});

ConnectInitCode
  Code:
    function init(obj)
    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
    % get Interface object.
    g = get(obj, 'Interface');

    % Set the instrument in a known state.
    fprintf(g, '*RST');

    % Turn off outputs.
    CHANNELS = get(obj, 'SMUs');

    % Start with high channels so that we end up with Ch1 as active
    for k = CHANNELS:-1:1

        % turn off output
        str = sprintf('OUTP %d, (@%d)', 0, k);
        fprintf(g, str);
    end

CleanupCode
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
Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property SMUs
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get object interface.
      g = get(obj, 'Interface');

      % get umber of channels
      cmdstr = 'SYST:CHAN?';
      fprintf(g, cmdstr);
      channels = str2num(fscanf(g));

      % return the number of channels
      propertyValue = channels;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

Group smu
  Size: 3
  Mappings
    ChannelMap Command="3" Index="3"
    ChannelMap Command="2" Index="2"
    ChannelMap Command="1" Index="1"

  Property Current
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get the interface object.
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));
      MODE = get(obj, 'Mode');

      switch upper(MODE)
          case 'V'
              cmdstr = sprintf('CURR:LIM? (@%d)', CHANNEL);
          case 'I'
              cmdstr = sprintf('CURR? (@%d)', CHANNEL);
      end

      % send command
      fprintf(g, cmdstr);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get the interface object.
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));
      MODE = get(obj, 'Mode');
      CurrentRange = abs(propertyValue);

      % set range
      if CurrentRange < 1e-6
          rangestr = 'R1uA';
      elseif CurrentRange < 10e-6
          rangestr = 'R10uA';
      elseif CurrentRange < 100e-6
          rangestr = 'R100uA';
      elseif CurrentRange < 1e-3
          rangestr = 'R1mA';
      elseif CurrentRange < 10e-3
          rangestr = 'R10mA';
      elseif CurrentRange <= 120e-3
          rangestr = 'R120mA';
      end
      cmdstr = sprintf('CURR:RANG %s, (@%d)', rangestr, CHANNEL)
      fprintf(g, cmdstr);

      % Set the current setting for the active channel
      switch upper(MODE)
          case 'V'
              cmdstr = sprintf('CURR:LIM %g, (@%d)', propertyValue, CHANNEL);
          case 'I'
              cmdstr = sprintf('CURR %g, (@%d)', propertyValue, CHANNEL);
      end

      % send command
      fprintf(g, cmdstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % get mode of channel
      propertyValue = g.UserData.Mode{CHANNEL};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % get mode of channel
      CHANNEL_Mode = g.UserData.Mode{CHANNEL};
      CHANNEL_Voltage = get(obj,'Voltage');
      CHANNEL_Current = get(obj,'Current');
      CHANNEL_Output = get(obj,'Output');

      % resave input parameter
      SET_Mode = upper(propertyValue(1));

      % change mode if needed
      if ~strcmp(SET_Mode, CHANNEL_Mode);
          % set the mode of CHANNEL
          g.UserData.Mode{CHANNEL} = SET_Mode;

          % check biasing mode
          switch SET_Mode
              case 'V'
                  vreq = CHANNEL_Voltage;
                  ilimit = CHANNEL_Current;
                  cmd_str = sprintf('CURR:LIM %d, (@%d)', CHANNEL_Current, CHANNEL);
                  fprintf(g, cmd_str);
                  cmd_str = sprintf('VOLT %d, (@%d)', CHANNEL_Voltage, CHANNEL);
                  fprintf(g, cmd_str);
              case 'I'
                  vlimit = CHANNEL_Voltage;
                  ireq = CHANNEL_Current;
                  cmd_str = sprintf('VOLT:LIM %d, (@%d)', CHANNEL_Voltage, CHANNEL);
                  fprintf(g, cmd_str);
                  cmd_str = sprintf('CURR %d, (@%d)', CHANNEL_Current, CHANNEL);
                  fprintf(g, cmd_str);
          end
      end
    PermissibleType: String none
    ReadOnly: never

  Property Output
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % Check if the Output is on or off
      cmdstr = sprintf('OUTP? (@%d)', CHANNEL);
      fprintf(g, cmdstr);
      propertyValue = fscanf(g, '%d');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % Set the Output to on or off
      if isa(propertyValue,'char')
          switch upper(propertyValue)
              case 'ON'
                  outp = 1;
              case 'OFF'
                  outp = 0;
          end
      else
          outp = propertyValue;
      end

      % Set the Output-state
      cmdstr = sprintf('OUTP %d, (@%d)', outp, CHANNEL);
      fprintf(g, cmdstr);
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0
    ReadOnly: never

  Property Voltage
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get the interface object.
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));
      MODE = get(obj, 'Mode');

      switch upper(MODE)
          case 'V'
              cmdstr = sprintf('VOLT? (@%d)', CHANNEL);
          case 'I'
              cmdstr = sprintf('VOLT:LIM? (@%d)', CHANNEL);
      end

      % send command
      fprintf(g, cmdstr);
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get the interface object.
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));
      MODE = get(obj, 'Mode');
      VoltageRange = abs(propertyValue);

      % set range
      if VoltageRange < 2
          rangestr = 'R2V';
      elseif VoltageRange >= 2
          rangestr = 'R20V';
      end
      cmdstr = sprintf('VOLT:RANG %s, (@%d)', rangestr, CHANNEL)
      fprintf(g, cmdstr);

      % create command string
      switch upper(MODE)
          case 'V'
              cmdstr = sprintf('VOLT %g, (@%d)', propertyValue, CHANNEL);
          case 'I'
              cmdstr = sprintf('VOLT:LIM %g, (@%d)', propertyValue, CHANNEL);
      end

      % send command
      fprintf(g, cmdstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method MeasCurrent
    MCode:
      function iout = MeasCurrent(obj, channel)
      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
      % get Interface object.
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % Measure Current.
      cmdstr = sprintf('MEAS:CURR? (@%d)', CHANNEL);
      fprintf(g, cmdstr);
      iout = fscanf(g, '%g');

  Method MeasVoltage
    MCode:
      function vout = MeasVoltage(obj, channel)
      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
      % get Interface object.
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % Measure Current.
      cmdstr = sprintf('MEAS:VOLT? (@%d)', CHANNEL);
      fprintf(g, cmdstr);
      vout = fscanf(g, '%g');
