MATLABInstrumentDriver
FileVersion: 1.0
DriverName: C:\Program Files\MATLAB\R2006a\work\icontrol\agilent_4395a.mdd
DriverType: MATLAB interface object
InstrumentType: Vector Network Analyzer
InstrumentManufacturer: Anritsu
InstrumentModel: 37xxx
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST

CreateInitCode
  Code:
    function init(obj)
    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
    % Increase Timeout
    set(obj, 'Timeout', 60); % 1 minute

    g = get(obj, 'Interface');
    fclose(g);

    % Increase BufferSize to hold a lot of data
    set(g, 'InputBufferSize', 2*15*1601+10); % Complex 1601 points ASCII-data
    set(g, 'OutputBufferSize', 2*15*1601+10); % Complex 1601 points ASCII-data

ConnectInitCode
  Code:
    function init(obj)
    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
    g = get(obj, 'Interface');

    %fprintf(g, 'DCL');
    fprintf(g, '*CLS');
    fprintf(g, 'HLD');

CleanupCode
  Code:
    function cleanup(obj)
    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
    g = get(obj, 'Interface');

    %fprintf(g, 'DCL');
    fprintf(g, '*CLS');
    fprintf(g, 'HLD');

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property Average
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'AVER?');
      averon = fscanf(g, '%d');

      if averon == 1
          % cannot query Average without enabling
          fprintf(g,'AVERON OUTPACTI');
          aver = fscanf(g, '%g');
      else
          aver = 0;
      end

      propertyValue = aver;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      if propertyValue <= 1
          % if averaging is set to 1 then turn averaging off
          fprintf(g, 'AVERON 1'); % but also set averaging to 1
          fprintf(g, 'AVEROFF');
      else
          % else turn averaging on...
          fprintf(g, 'AVERON %d', propertyValue);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Correction
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'CORR?');
      calset = fscanf(g, '%d');

      if calset > 0
          fprintf(g, 'CALS?');
          calset = fscanf(g, '%d');
      end
      propertyValue = calset;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      if propertyValue == 0
          fprintf(g, 'CORROFF');
      else
          % use the argument as the calset number
          fprintf(g, 'CORRON; CALS%d', propertyValue);
      end
    PermissibleType: Double none
    DefaultValue: 0.0
    ReadOnly: never

  Property CorrectionType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Query correction type
      fprintf(g, 'CALI?');
      caltype = fscanf(g, '%s');
      % Possible answers
      types = {'"RECEIVER"','"RESPONSE"','"RESPONSE&ISOL''N"','"S111-PORT"','"S222-PORT"','"2-PORT"','"UNDEFINED"'};
      [void, index]=intersect(types, caltype);

      switch index
          case 1
              propertyValue = 'Receiver';
          case 4
              propertyValue = '1-port S11';
          case 5
              propertyValue = '1-port S22';
          case 6
              propertyValue = '2-port';
          otherwise
              propertyValue = 'Unknown';
      end
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always

  Property Detector
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'DETE?');
      str = fscanf(g, '%s');

      switch str
          case '"NORMALBW"'
              propertyValue = 'normal'
          case '"WIDEBW"'
              propertyValue = 'wide'
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      switch propertyValue
          case 'normal'
              fprintf(g, 'DETENORB');
          case 'wide'
              fprintf(g, 'DETEWIDB');
      end
    PermissibleType: String none
    ReadOnly: never

  Property Domain
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'DOMA?');
      str = fscanf(g, '%s');

      switch str
          case '"FREQUENCY"'
              propertyValue = 'frequency';
          case '"POWER"'
              propertyValue = 'power';
          case '"PULSEPROFILE"'
              propertyValue = 'pulseprofile';
          case '"TIMELOWPASS"'
              propertyValue = 'time low-pass';
          case '"TIMEBANDPASS"'
              propertyValue = 'time band-pass';
          otherwise
              propertyValue = 'aux';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      switch propertyValue
          case 'frequency'
              fprintf(g, 'FREQ');
          case 'power'
              fprintf(g, 'POWD');
          case 'pulseprofile'
              fprintf(g, 'PULP');
          case 'time low-pass'
              fprintf(g, 'TIML');
          case 'time band-pass'
              fprintf(g, 'TIMB');
      end
    PermissibleType: String none
    ReadOnly: never

  Property Hold
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Query if we have HOLD or CONT
      fprintf(g, 'GROU?');
      str = fscanf(g, '%s');

      switch str
          case '"CONTINUAL"'
              propertyValue = 0;
          case '"HOLD"'
              propertyValue = 1;
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      %
      switch propertyValue
          case 0
              fprintf(g, 'CONT');
          case 1
              fprintf(g, 'HOLD');
      end
    PermissibleType: Double bounded [Max="1.0" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never

  Property NumFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Read frequency points
      fprintf(g,'FMA;ONP');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'ONP %d', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Port1Attenuator
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Press Stimulus-menu, Power-softkey, Attn1-softkey
      fprintf(g, 'ATTP1 OUTPACTI');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % set Attenuator at Port 1
      fprintf(g, 'ATTP1 %d', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Port1Extension
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Get port extension
      fprintf(g, 'PORT1 OUTPACTI');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % set Portextension at Port 1
      fprintf(g, 'PORT1 %23.20f', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Port2Attenuator
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Press Stimulus-menu, Power-softkey, Attn2-softkey
      fprintf(g, 'ATTP2 OUTPACTI');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % set Attenuator at Port 2
      fprintf(g, 'ATTP2 %d', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Port2Extension
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Get port extension
      fprintf(g, 'PORT2 OUTPACTI');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % set Portextension at Port 1
      fprintf(g, 'PORT2 %23.20f', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Source1Power
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Press Stimulus-menu, Power-softkey, Source1-softkey
      fprintf(g, 'POWE OUTPACTI');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % Set RF Power
      fprintf(g, 'POWE %g', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Source2Power
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Press Stimulus-menu, Power-softkey, Source2-softkey
      fprintf(g, 'POW2 OUTPACTI');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % Set RF Power
      fprintf(g, 'POW2 %g', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property StartFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Read start frequency
      fprintf(g,'FMA;SRT?');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % Set start frequency
      fprintf(g,'SRT %g', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property StopFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Read start frequency
      fprintf(g,'FMA;STP?');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % Set stop frequency
      fprintf(g,'STP %g', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property SweepType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      % Read type of frequency sweep
      % first check if we have segment or a regular list
      fprintf(g, 'SWEM?');
      str = fscanf(g, '%s');

      switch str
          case '"STEP"'
              propertyValue = 'Linear';
          case '"SINGLEPOINT"'
              propertyValue = 'Single';
          case '"FREQUENCYLIST"'
              propertyValue = 'List';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      % set type of frequency sweep

      switch propertyValue
          case 'Linear'
              fprintf(g, 'STEP');
          case 'Single'
              fprintf(g, 'SINP');
          case 'List'
              fprintf(g, 'LISFREQ');
          otherwise
              error('Unknown sweep type.');
      end
    PermissibleType: String enum [Linear=Linear, Logarithmic=Logarithmic, List=List, Single=Single]
    DefaultValue: Linear
    ReadOnly: never

  Property Trigger
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'EXTT?');
      str = fscanf(g, '%s');

      switch str
          case '"INTERNAL"'
              propertyValue = 'internal'
          case '"EXTERNAL"'
              propertyValue = 'external'
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      switch propertyValue
          case 'internal'
              fprintf(g, 'EXTTOFF');
          case 'external'
              fprintf(g, 'EXTTPOIN');
      end
    PermissibleType: String none
    ReadOnly: never

  Property TriggerDelay
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'TRID OUTPACTI');
      propertyValue = fscanf(g, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'TRID %g', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method Freq
    MCode:
      function frequencies = Freq(obj)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'LSB;FMB;OFV');
      frequencies = read_anritsu(g);

  Method FreqList
    MCode:
      function FreqList(obj, freq)
      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
      % Load a frequency list into the VNA

      g = get(obj, 'Interface');

      num = length(freq);
      uniform = (length(unique(round(1e13*diff(freq)))) == 1); % resolution of 1 Hz

      % check if the frequency list is uniform and have the builtin number of points
      if uniform & ismember(num,[51 101 201 401 801])
          % then use linear sweep
          set(obj, 'SweepType', 'Linear');
          set(obj, 'StartFrequency', min(freq));
          set(obj, 'StopFrequency', max(freq));
          set(obj, 'NumFrequency', num);
      else
          if num > 792
              error('Frequency list is limited to 792 points.');
          end

          freq = sort(freq); % the frequency must be in increasing order
          num = length(freq);
          TOL = 1e-6;
          % parse the frequency list
          % check for continuous intervals
          idx = [];
          if num > 1
              step = freq(2) - freq(1);
              for k = 2:num
                  prev_step = step;
                  step = freq(k) - freq(k-1);
                  if abs(step - prev_step) > TOL
                      % step changed, only use points up to (k-1) for this segment
                      idx = [idx k-1];
                      if ((k+1) <= num)
                          step = freq(k+1) - freq(k);
                      end
                  end
              end
          else
              idx = 1;
          end
          % construct segments
          n = 1;
          for k = 1:length(idx)
              start_idx = n;
              stop_idx = idx(k);
              points = 1 + (stop_idx - start_idx);
              n = stop_idx + 1;
              segments(k,:) = [freq(start_idx) freq(stop_idx) points];
          end
          start_idx = n;
          stop_idx = num;
          points = 1 + (stop_idx - start_idx);
          segments(k+1,:) = [freq(start_idx) freq(stop_idx) points];

          % clear existing list
          fprintf(g, 'EDITLIST');
          fprintf(g, 'CLEL');

          % now upload the segments
          for k = 1:size(segments, 1)
              fprintf(g, 'SADD');
              str = sprintf('SEGM%d; STAR %9.6fHZ', k, segments(k,1));
              fprintf(g, str);
              str = sprintf('SEGM%d; STOP %9.6fHZ', k, segments(k,2));
              fprintf(g, str);
              str = sprintf('SEGM%d; POIN %d', k, segments(k,3));
              fprintf(g, str);
              str = sprintf('SEGM%d; SDON', k);
              fprintf(g, str);
          end
          fprintf(g, 'DUPD; EDITDONE');

      end

  Method Measure
    MCode:
      function xp = Measure(obj)
      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
      invoke(obj, 'SingleSweep');
      s(1,1,:) = invoke(obj, 'Read', 'S11');
      s(2,1,:) = invoke(obj, 'Read', 'S21');
      s(1,2,:) = invoke(obj, 'Read', 'S12');
      s(2,2,:) = invoke(obj, 'Read', 'S22');
      freq = invoke(obj, 'Freq');
      xp = xparam(s, 'S', 50, freq);

      % % First check calibration type
      % caltype = get(obj, 'CorrectionType');
      % % Then perform a suitable measurement
      % switch caltype
      %     case '1-port S11'
      %         invoke(obj, 'SingleSweep');
      %         s(1,1,:) = invoke(obj, 'Read', 'S11');
      %         freq = invoke(obj, 'Freq');
      %         xp = xparam(s, 'S', 50, freq);
      %     case '1-port S22'
      %         invoke(obj, 'SingleSweep');
      %         s(1,1,:) = invoke(obj, 'Read', 'S22');
      %         freq = invoke(obj, 'Freq');
      %         xp = xparam(s, 'S', 50, freq);
      %     case '2-port'
      %         invoke(obj, 'SingleSweep');
      %         s(1,1,:) = invoke(obj, 'Read', 'S11');
      %         s(2,1,:) = invoke(obj, 'Read', 'S21');
      %         s(1,2,:) = invoke(obj, 'Read', 'S12');
      %         s(2,2,:) = invoke(obj, 'Read', 'S22');
      %         freq = invoke(obj, 'Freq');
      %         xp = xparam(s, 'S', 50, freq);
      %     otherwise
      %         invoke(obj, 'SingleSweep');
      %         s(1,1,:) = invoke(obj, 'Read', 'S11');
      %         invoke(obj, 'SingleSweep');
      %         s(2,1,:) = invoke(obj, 'Read', 'S21');
      %         invoke(obj, 'SingleSweep');
      %         s(1,2,:) = invoke(obj, 'Read', 'S12');
      %         invoke(obj, 'SingleSweep');
      %         s(2,2,:) = invoke(obj, 'Read', 'S22');
      %         freq = invoke(obj, 'Freq');
      %         xp = xparam(s, 'S', 50, freq);
      % end

  Method Read
    MCode:
      function out = Read(obj, parameter)
      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
      g = get(obj, 'Interface');

      fprintf(g, 'LSB;FMB;O%sC', parameter);
      data = read_anritsu(g);

      out = data(1:2:end)+j*data(2:2:end);

  Method SingleSweep
    MCode:
      function out = SingleSweep(obj)
      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
      g = get(obj, 'Interface');

      % Trigger first sweep
      fprintf(g,'*CLS;');
      fprintf(g,'*SRE 16;HLD;TRS;WFS;*OPC?');

      out = [];
      counter = 0;
      while isempty(out) & counter < 1e4
          out = spoll(g);
          pause(0.05);
          counter = counter + 1;
      end
      out = fscanf(g,'%s');

      % Trigger second sweep
      fprintf(g,'*CLS;');
      fprintf(g,'*SRE 16;HLD;TRS;WFS;*OPC?');

      out = [];
      counter = 0;
      while isempty(out) & counter < 1e4
          out = spoll(g);
          pause(0.05);
          counter = counter + 1;
      end
      out = fscanf(g,'%s');
