MATLABInstrumentDriver
FileVersion: 1.0
DriverName: C:\Program Files\MATLAB\R2006a\work\icontrol\agilent_4156_analyzer.mdd
DriverType: MATLAB interface object
InstrumentType: DC Power Supply
InstrumentManufacturer: HAMEG
InstrumentModel: H4040
InstrumentVersion: 1.0
Identify: IDN?
Reset: *RST
Selftest: *TST?
Error: *ESE?

CreateInitCode
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
ConnectInitCode
  Code:
    function init(obj)
    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
    % get Interface object.
    g = get(obj, 'Interface');

    % Set the instrument in a known state.
    fprintf(g, '*RST');

    % Turn off outputs.
    CHANNELS = get(obj, 'SMUs');

    % Start with high channels so that we end up with Ch1 as active
    for k = CHANNELS:-1:1
        % select active channel
        cmdstr = sprintf('INST:NSEL %d', k);
        fprintf(g, cmdstr);

        % turn off output
        str = sprintf('OUTP %d', 0);
        fprintf(g, str);
    end

    cmdstr = sprintf('OUTP:GEN 0');
    fprintf(g, cmdstr);

CleanupCode
  Code:
    function cleanup(obj)
    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
    % get Interface object.
    g = get(obj, 'Interface');

    % Turn off outputs.
    CHANNELS = get(obj, 'SMUs');

    % Start with high channels so that we end up with Ch1 as active
    for k = CHANNELS:-1:1
        % select active channel
        cmdstr = sprintf('INST:NSEL %d', k);
        fprintf(g, cmdstr);

        % turn off output
        str = sprintf('OUTP %d', 0);
        fprintf(g, str);
    end

    cmdstr = sprintf('OUTP:GEN 0');
    fprintf(g, cmdstr);

    % set to local
    cmdstr = sprintf('SYST:LOC');
    fprintf(g, cmdstr);

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property Output
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get object interface.
      g = get(obj, 'Interface');

      % Check if the Output is on or off
      fprintf(g, 'OUTP:GEN?');
      propertyValue = fscanf(g, '%d');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get object interface.
      g = get(obj, 'Interface');

      % Set output state.
      cmdstr = sprintf('OUTP:GEN %d', propertyValue);
      fprintf(g, cmdstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property SMUs
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get object interface.
      g = get(obj, 'Interface');

      % read the model number string
      fprintf(g, '*IDN?');
      idn = fscanf(g, '%s');

      % look up the model string:
      switch upper(idn(7:13))
          case 'HMP4040'
              channels = 4;
          otherwise
              channels = 1;
      end

      % return the number of channels
      propertyValue = channels;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

Group smu
  Size: 4
  Mappings
    ChannelMap Command="4" Index="4"
    ChannelMap Command="3" Index="3"
    ChannelMap Command="2" Index="2"
    ChannelMap Command="1" Index="1"

  Property Current
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get the interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % Read the current setting for the active channel
      CHANNEL = str2num(get(obj, 'HwName'));
      cmdstr = sprintf('INST:NSEL %d',CHANNEL);
      fprintf(g, cmdstr);

      fprintf(g, 'CURR?');
      iset = fscanf(g, '%g');

      propertyValue = iset;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get the interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % Set the current setting for the active channel
      CHANNEL = str2num(get(obj, 'HwName'));
      cmdstr = sprintf('INST:NSEL %d',CHANNEL);
      fprintf(g, cmdstr);

      cmdstr = sprintf('CURR %g', abs(propertyValue));
      fprintf(g, cmdstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Output
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % Get the ActiveChannel
      CHANNEL = str2num(get(obj, 'HwName'));
      cmdstr = sprintf('INST:NSEL %d',CHANNEL);
      fprintf(g, cmdstr);

      % Check if the Output is on or off
      fprintf(g, 'OUTP?');
      propertyValue = fscanf(g, '%d');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % Get the ActiveChannel
      CHANNEL = str2num(get(obj, 'HwName'));
      cmdstr = sprintf('INST:NSEL %d',CHANNEL);
      fprintf(g, cmdstr);

      % Set the Output to on or off
      if isa(propertyValue,'char')
          switch upper(propertyValue)
              case 'ON'
                  outp = 1;
              case 'OFF'
                  outp = 0;
          end
      else
          outp = propertyValue;
      end

      % Set the Output-state
      cmdstr = sprintf('OUTP %d', outp);
      fprintf(g, cmdstr);
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0
    ReadOnly: never

  Property Voltage
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get the interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % Read the voltage setting for the active channel
      CHANNEL = str2num(get(obj, 'HwName'));
      cmdstr = sprintf('INST:NSEL %d',CHANNEL);
      fprintf(g, cmdstr);

      fprintf(g, 'VOLT?');
      vset = fscanf(g, '%g');

      propertyValue = vset;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get the interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % get ActiveChannel
      CHANNEL = str2num(get(obj, 'HwName'));
      cmdstr = sprintf('INST:NSEL %d',CHANNEL);
      fprintf(g, cmdstr);

      % Set the voltage setting for the active channel
      cmdstr = sprintf('VOLT %g', abs(propertyValue));
      fprintf(g, cmdstr);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method MeasCurrent
    MCode:
      function iout = MeasCurrent(obj, channel)
      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
      % get Interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % if channel is not given use the active channel
      CHANNEL = str2num(get(obj, 'HwName'));
      cmdstr = sprintf('INST:NSEL %d',CHANNEL);
      fprintf(g, cmdstr);

      % Measure Current.
      fprintf(g, 'MEAS:CURR?');
      iout = fscanf(g, '%g');

  Method MeasVoltage
    MCode:
      function vout = MeasVoltage(obj, channel)
      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
      % get Interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % if channel is not given use the active channel
      CHANNEL = str2num(get(obj, 'HwName'));
      cmdstr = sprintf('INST:NSEL %d',CHANNEL);
      fprintf(g, cmdstr);

      % Measure Voltage.
      fprintf(g, 'MEAS:VOLT?');
      vout = fscanf(g, '%g');
