MATLABInstrumentDriver
FileVersion: 1.0
DriverName: C:\Program Files\MATLAB\R2006a\work\icontrol\agilent_66xxx_single.mdd
DriverType: MATLAB interface object
InstrumentType: DC Power Supply
InstrumentManufacturer: KEITHLEY
InstrumentModel: 2400, 2410, 2420, 2425, 2430, 2440
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
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
ConnectInitCode
  Code:
    function init(obj)
    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
    % get Interface object.
    g = get(obj, 'Interface');

    % Set the instrument in a known state.
    fprintf(g, '*RST');

    % Turn off beeper.
    fprintf(g, ':SYSTem:BEEPer:STATe 0');

    % Turn off Output.
    fprintf(g, ':OUTP 0');

    % Setup measurement of voltage and current
    fprintf(g, ':SENS:FUNC:OFF:ALL');
    fprintf(g, ':SENS:FUNC:ON "VOLT"');
    fprintf(g, ':SENS:FUNC:ON "CURR"');

CleanupCode
  Code:
    function cleanup(obj)
    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
    % get Interface object.
    g = get(obj, 'Interface');

    % Turn off Output.
    fprintf(g, ':OUTP 0');

    % Set the instrument in a known state.
    fprintf(g, '*RST');

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property ActiveChannel
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      propertyValue = 1;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Channels
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % This driver is for single-channel DC-supplies

      propertyValue = 1;
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    PermissibleType: Double none
    DefaultValue: 1
    ReadOnly: always

  Property Current
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % first query mode:
      mode = get(obj, 'Mode');

      switch mode
          case 'Voltage'
              % Get compliance
              fprintf(g, ':SENS:CURRENT:PROTECTION?');
              propertyValue = fscanf(g, '%g');
          case 'Current'
              % Get current setting
              fprintf(g, ':SOURCE:CURRENT:LEVEL?');
              propertyValue = fscanf(g, '%g');
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % first query mode:
      mode = get(obj, 'Mode');

      switch mode
          case 'Voltage'
              % Set compliance
              fprintf(g, ':SENS:CURRENT:PROTECTION %g', propertyValue);
              fprintf(g, ':SENS:CURRENT:RANG:AUTO:LLIM %g', -abs(propertyValue));
              fprintf(g, ':SENS:CURRENT:RANG:AUTO:ULIM %g', abs(propertyValue));
          case 'Current'
              % Set current setting
              fprintf(g, ':SOURCE:CURRENT:LEVEL %g', propertyValue);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get object interface.
      g = get(obj, 'Interface');

      % Query voltage/current mode
      fprintf(g, ':SOURCE:FUNC?');
      mode = fscanf(g, '%s');

      switch mode
          case 'VOLT'
              propertyValue = 'Voltage';
          case 'CURR'
              propertyValue = 'Current';
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get object interface.
      g = get(obj, 'Interface');

      % Set voltage/current mode
      fprintf(g, ':SOURCE:FUNC %s', propertyValue);

      % then adjust autoranging etc.
      switch propertyValue
          case 'VOLT'
              fprintf(g, ':SOUR:VOLT:MODE FIX');
              fprintf(g, ':SOUR:VOLT:RANG:AUTO ON');
          case 'CURR'
              fprintf(g, ':SOUR:CURR:MODE FIX');
              fprintf(g, ':SOUR:CURR:RANG:AUTO ON');
      end
    PermissibleType: String enum [Voltage=VOLT, Current=CURR]
    DefaultValue: Voltage
    ReadOnly: never

  Property Output
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % Check if the Output is on or off
      fprintf(g, ':OUTP?');
      propertyValue = fscanf(g, '%d');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % Set the Output to on or off

      if isa(propertyValue,'char')
          switch upper(propertyValue)
              case 'ON'
                  outp = 1;
              case 'OFF'
                  outp = 0;
          end
      else
          outp = propertyValue;
      end

      % Set the Output-state
      fprintf(g, ':OUTP %d', outp);
      fprintf(g, ':SENS:CURR:RANG:AUTO 1');
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0
    ReadOnly: never

  Property Sense
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % Check if the remote sensing is on or off
      fprintf(g, ':SYSTem:RSENse?');
      propertyValue = fscanf(g, '%d');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % Set remote sensing on or off
      outp = propertyValue;
      fprintf(g, '::SYSTem:RSENse %d', outp);
    PermissibleType: Double none
    ReadOnly: never

  Property Voltage
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % first query mode:
      mode = get(obj, 'Mode');

      switch mode
          case 'Current'
              % Get compliance
              fprintf(g, ':SENS:VOLTAGE:PROTECTION?');
              propertyValue = fscanf(g, '%g');
          case 'Voltage'
              % Get voltage setting
              fprintf(g, ':SOURCE:VOLTAGE:LEVEL?');
              propertyValue = fscanf(g, '%g');
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % first query mode:
      mode = get(obj, 'Mode');

      switch mode
          case 'Current'
              % Set compliance
              fprintf(g, ':SENS:VOLTAGE:PROTECTION %g', propertyValue);
          case 'Voltage'
              % Set voltage setting
      %         if abs(propertyValue) > 21

                %CHRISTER: Removed this line, seems to give error message on instrument display
                %fprintf(g, ':SENS:VOLT:RANG: %g', abs(propertyValue));
                fprintf(g, ':SENS:VOLT:RANG: %g', sign(propertyValue)*ceil(abs(propertyValue)));

      %         else
      %             fprintf(g, ':SENS:VOLTAGE:RANG:AUTO:ULIM %g', abs(propertyValue));
      %         end
              fprintf(g, ':SOURCE:VOLTAGE:LEVEL %g', propertyValue);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method MeasCurrent
    MCode:
      function iout = MeasCurrent(obj)
      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
      % get Interface object.
      g = get(obj, 'Interface');

      % Measure Current.
      fprintf(g, ':READ?');
      str = fscanf(g, '%s');
      val = sscanf(str,'%g,%g');
      iout = val(2);

  Method MeasVoltage
    MCode:
      function vout = MeasVoltage(obj)
      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
      % get Interface object.
      g = get(obj, 'Interface');

      % Measure Voltage.
      % Measure Current.
      fprintf(g, ':READ?');
      str = fscanf(g, '%s');
      val = sscanf(str,'%g,%g');
      vout = val(1);
