MATLABInstrumentDriver
FileVersion: 1.0
DriverName: C:\Program Files\MATLAB\R2006a\work\icontrol\agilent_4156_analyzer.mdd
DriverType: MATLAB interface object
InstrumentType: DC Power Supply
InstrumentManufacturer: Keithley
InstrumentModel: 2602A
InstrumentVersion: 1.0
Identify: print(localnode.description)
Reset: reset()

CreateInitCode
  Code:
    function init(obj)
    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
    set(obj, 'Timeout', 10); % 10 seconds

    g = get(obj, 'Interface');

    fclose(g);

    % Increase BufferSizes to hold a lot of data
    %set(g, 'InputBufferSize', 1001*128*8+10);
    %set(g, 'OutputBufferSize', 1001*128*8+10);

    % Setup UserData
    g.UserData.Output = [0 0];
    g.UserData.Mode = upper({'Voltage','Voltage'});
    g.UserData.Voltage = [0 0];
    g.UserData.Current = 1e-3*[1 1]; % default to 1 mA

ConnectInitCode
  Code:
    function init(obj)
    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
    g = get(obj, 'Interface');

    % Reset instrument
    fprintf(g, 'reset()');

CleanupCode
  Code:
    function cleanup(obj)
    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
    % Return from user mode
    g = get(obj, 'Interface');

    fprintf(g,'localnode.prompts = 0')
    fprintf(g, 'reset()');

    % Enable high capacitance mode
    %fprintf(g, 'smua.source.highc = smua.ENABLE');
    %fprintf(g, 'smub.source.highc = smub.ENABLE');

    % Reset UserData
    g.UserData.Output = [0 0];
    g.UserData.Mode = upper({'Voltage','Voltage'});
    g.UserData.Voltage = [0 0];
    g.UserData.Current = 1e-3*[1 1]; % default to 1 mA

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

Group smu
  Size: 2
  Mappings
    ChannelMap Command="2" Index="2"
    ChannelMap Command="1" Index="1"

  Property Current
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % read current from UserData
      propertyValue = g.UserData.Current(CHANNEL);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));
      if CHANNEL == 1
          CHANNEL_STR = 'a';
      else
          CHANNEL_STR = 'b';
      end

      % write current to UserData
      g.UserData.Current(CHANNEL) = propertyValue;

      if g.UserData.Output(CHANNEL) > 0

          % check biasing mode
          Mode = upper(g.UserData.Mode{CHANNEL});
          voltage_mode = upper('V');
          current_mode = upper('C');
          switch Mode(1)
              case voltage_mode
                  vreq = g.UserData.Voltage(CHANNEL);
                  ilimit = g.UserData.Current(CHANNEL);
                  cmd = sprintf('smu%s.source.func = smu%s.OUTPUT_DCVOLTS',CHANNEL_STR,CHANNEL_STR);
                  cmd = sprintf('%s;smu%s.source.levelv = %f',cmd,CHANNEL_STR,vreq);
                  cmd = sprintf('%s;smu%s.source.limiti = %f',cmd,CHANNEL_STR,ilimit);
                  fprintf(g, cmd);
              case current_mode
                  vlimit = g.UserData.Voltage(CHANNEL);
                  ireq = g.UserData.Current(CHANNEL);
                  cmd = sprintf('smu%s.source.func = smu%s.OUTPUT_DCAMPS',CHANNEL_STR,CHANNEL_STR);
                  cmd = sprintf('%s;smu%s.source.leveli = %f',cmd,CHANNEL_STR,ireq);
                  cmd = sprintf('%s;smu%s.source.limitv = %f',cmd,CHANNEL_STR,vlimit);
                  fprintf(g, cmd);
          end
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property HighCapacitanceMode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));
      if CHANNEL == 1
          CHANNEL_STR = 'a';
      else
          CHANNEL_STR = 'b';
      end

      cmd = sprintf('print(smu%s.source.highc)',CHANNEL_STR);
      fprintf(g, cmd);
      str = fscanf(g, '%s');

      propertyValue = sscanf(str, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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

      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));
      if CHANNEL == 1
          CHANNEL_STR = 'a';
      else
          CHANNEL_STR = 'b';
      end

      % decode argument
      if isa(propertyValue,'char')
          switch upper(propertyValue)
              case 'ON'
                  hicmode = 1;
              case 'OFF'
                  hicmode = 0;
          end
      else
          hicmode = propertyValue;
      end

      if hicmode
         cmd = sprintf('smu%s.source.highc = smu%s.ENABLE',CHANNEL_STR, CHANNEL_STR);
         fprintf(g, cmd);
      else
         cmd = sprintf('smu%s.source.highc = smu%s.DISABLE',CHANNEL_STR, CHANNEL_STR);
         fprintf(g, cmd);
      end
    PermissibleType: Double none
    ReadOnly: never

  Property Mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % get the mode of CHANNEL

      propertyValue = g.UserData.Mode{CHANNEL};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));
      if CHANNEL == 1
          CHANNEL_STR = 'a';
      else
          CHANNEL_STR = 'b';
      end

      % set the mode of CHANNEL

      g.UserData.Mode{CHANNEL} = propertyValue;

      if g.UserData.Output(CHANNEL) > 0
          % turn on output switch
          fprintf(g, 'CN %d', CHANNEL);

          % then check biasing mode
          Mode = upper(g.UserData.Mode{CHANNEL});
          voltage_mode = upper('V');
          current_mode = upper('C');
          switch Mode(1)
              case voltage_mode
                  vreq = g.UserData.Voltage(CHANNEL);
                  ilimit = g.UserData.Current(CHANNEL);
                  cmd = sprintf('smu%s.source.func = smu%s.OUTPUT_DCVOLTS',CHANNEL_STR,CHANNEL_STR);
                  cmd = sprintf('%s;smu%s.source.levelv = %f',cmd,CHANNEL_STR,vreq);
                  cmd = sprintf('%s;smu%s.source.limiti = %f',cmd,CHANNEL_STR,ilimit);
                  fprintf(g, cmd);
              case current_mode
                  vlimit = g.UserData.Voltage(CHANNEL);
                  ireq = g.UserData.Current(CHANNEL);
                  cmd = sprintf('smu%s.source.func = smu%s.OUTPUT_DCAMPS',CHANNEL_STR,CHANNEL_STR);
                  cmd = sprintf('%s;smu%s.source.leveli = %f',cmd,CHANNEL_STR,ireq);
                  cmd = sprintf('%s;smu%s.source.limitv = %f',cmd,CHANNEL_STR,vlimit);
                  fprintf(g, cmd);
          end
      end
    PermissibleType: String none
    DefaultValue: VOLTAGE
    ReadOnly: never

  Property Output
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % get UserData
      propertyValue = g.UserData.Output(CHANNEL);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));
      if CHANNEL == 1
          CHANNEL_STR = 'a';
      else
          CHANNEL_STR = 'b';
      end

      % decode argument
      if isa(propertyValue,'char')
          switch upper(propertyValue)
              case 'ON'
                  outp = 1;
              case 'OFF'
                  outp = 0;
          end
      else
          outp = propertyValue;
      end

      % update UserData
      g.UserData.Output(CHANNEL) = outp;

      %
      if outp > 0
           % then check biasing mode
          Mode = upper(g.UserData.Mode{CHANNEL});
          voltage_mode = upper('V');
          current_mode = upper('C');
          switch Mode(1)
              case voltage_mode
                  vreq = g.UserData.Voltage(CHANNEL);
                  ilimit = g.UserData.Current(CHANNEL);
                  cmd = sprintf('smu%s.source.func = smu%s.OUTPUT_DCVOLTS',CHANNEL_STR,CHANNEL_STR);
                  cmd = sprintf('%s;smu%s.source.levelv = %f',cmd,CHANNEL_STR,vreq);
                  cmd = sprintf('%s;smu%s.source.limiti = %f',cmd,CHANNEL_STR,ilimit);
                  fprintf(g, cmd);
              case current_mode
                  vlimit = g.UserData.Voltage(CHANNEL);
                  ireq = g.UserData.Current(CHANNEL);
                  cmd = sprintf('smu%s.source.func = smu%s.OUTPUT_DCAMPS',CHANNEL_STR,CHANNEL_STR);
                  cmd = sprintf('%s;smu%s.source.leveli = %f',cmd,CHANNEL_STR,ireq);
                  cmd = sprintf('%s;smu%s.source.limitv = %f',cmd,CHANNEL_STR,vlimit);
                  fprintf(g, cmd);
          end
          cmd = sprintf('smu%s.source.output = smu%s.OUTPUT_ON', CHANNEL_STR, CHANNEL_STR);
          fprintf(g, cmd);
      else
          cmd = sprintf('smu%s.source.output = smu%s.OUTPUT_OFF', CHANNEL_STR, CHANNEL_STR);
          fprintf(g, cmd);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Voltage
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));

      % read voltage from UserData
      propertyValue = g.UserData.Voltage(CHANNEL);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));
      if CHANNEL == 1
          CHANNEL_STR = 'a';
      else
          CHANNEL_STR = 'b';
      end

      % write voltage to UserData
      g.UserData.Voltage(CHANNEL) = propertyValue;

      if g.UserData.Output(CHANNEL) > 0

          % then check biasing mode
          Mode = upper(g.UserData.Mode{CHANNEL});
          voltage_mode = upper('V');
          current_mode = upper('C');
          switch Mode(1)
              case voltage_mode
                  vreq = g.UserData.Voltage(CHANNEL);
                  ilimit = g.UserData.Current(CHANNEL);
                  cmd = sprintf('smu%s.source.func = smu%s.OUTPUT_DCVOLTS',CHANNEL_STR,CHANNEL_STR);
                  cmd = sprintf('%s;smu%s.source.levelv = %f',cmd,CHANNEL_STR,vreq);
                  cmd = sprintf('%s;smu%s.source.limiti = %f',cmd,CHANNEL_STR,ilimit);
                  fprintf(g, cmd);
              case current_mode
                  vlimit = g.UserData.Voltage(CHANNEL);
                  ireq = g.UserData.Current(CHANNEL);
                  cmd = sprintf('smu%s.source.func = smu%s.OUTPUT_DCAMPS',CHANNEL_STR,CHANNEL_STR);
                  cmd = sprintf('%s;smu%s.source.leveli = %f',cmd,CHANNEL_STR,ireq);
                  cmd = sprintf('%s;smu%s.source.limitv = %f',cmd,CHANNEL_STR,vlimit);
                  fprintf(g, cmd);
          end
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method MeasCurrent
    MCode:
      function out = MeasCurrent(obj)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));
      if CHANNEL == 1
          CHANNEL_STR = 'a';
      else
          CHANNEL_STR = 'b';
      end

      if g.UserData.Output(CHANNEL)>0

          cmd = sprintf('print(smu%s.measure.i())', CHANNEL_STR);
          fprintf(g, cmd);
          str = fscanf(g, '%s');
          out = sscanf(str, '%g');

      else
          out = 0;
      end

  Method MeasVoltage
    MCode:
      function out = MeasVoltage(obj)
      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
      g = get(get(obj, 'Parent'), 'Interface');
      CHANNEL = str2num(get(obj, 'HwName'));
      if CHANNEL == 1
          CHANNEL_STR = 'a';
      else
          CHANNEL_STR = 'b';
      end

      if g.UserData.Output(CHANNEL)>0

          cmd = sprintf('print(smu%s.measure.v())', CHANNEL_STR);
          fprintf(g, cmd);
          str = fscanf(g, '%s');
          out = sscanf(str, '%g');

      else
          out = 0;
      end
