MATLABInstrumentDriver
FileVersion: 1.0
DriverName: C:\Program Files\MATLAB\R2006a\work\icontrol\agilent_4156_analyzer.mdd
DriverType: MATLAB interface object
InstrumentType: DC Power Supply
InstrumentManufacturer: TTi
InstrumentModel: CPX400DP
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: ERR?

CreateInitCode
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
ConnectInitCode
  Code:
    function init(obj)
    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
    % get Interface object.
    g = get(obj, 'Interface');

    % Set the instrument in a known state.
    fprintf(g, '*RST');

CleanupCode
  Code:
    function cleanup(obj)
    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
    % get Interface object.
    g = get(obj, 'Interface');

    % Turn off outputs.
    channels = get(obj, 'SMUs');

    % Start with high channels so that we end up with Ch1 as active
    for k = channels:-1:1
        str = sprintf('OP%d %d', k, 0);
        fprintf(g, str);
    end

    % set to local
    fprintf(g, 'LOCAL');

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property SMUs
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get object interface.
      g = get(obj, 'Interface');

      % read the model number string
      fprintf(g, '*IDN?');
      idn = fscanf(g, '%s');

      % look up the model string:
      channels = 2;

      % return the number of channels
      propertyValue = channels;
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

Group smu
  Size: 4
  Mappings
    ChannelMap Command="4" Index="4"
    ChannelMap Command="3" Index="3"
    ChannelMap Command="2" Index="2"
    ChannelMap Command="1" Index="1"

  Property Current
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get the interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % Read the current setting for the active channel
      CHANNEL = str2num(get(obj, 'HwName'));
      str = sprintf('I%d?', CHANNEL);
      fprintf(g, str);
      iset = fscanf(g, '%g');

      propertyValue = iset;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get the interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % Set the current setting for the active channel
      CHANNEL = str2num(get(obj, 'HwName'));
      str = sprintf('I%d %g', CHANNEL, abs(propertyValue));
      fprintf(g, str);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Output
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % Get the ActiveChannel
      CHANNEL = str2num(get(obj, 'HwName'));

      % Check if the Output is on or off
      str = sprintf('OP%d?', CHANNEL);
      fprintf(g, str);
      pause(0.05);
      propertyValue = fscanf(g, '%d');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % Get the ActiveChannel
      CHANNEL = str2num(get(obj, 'HwName'));

      % Set the Output to on or off
      if isa(propertyValue,'char')
          switch upper(propertyValue)
              case 'ON'
                  outp = 1;
              case 'OFF'
                  outp = 0;
          end
      else
          outp = propertyValue;
      end

      % Set the Output-state
      str = sprintf('OP%d %d', CHANNEL, outp);
      fprintf(g, str);
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0
    ReadOnly: never

  Property Voltage
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get the interface object.
      g = get(get(obj, 'Parent'), 'Interface');

      % Read the voltage setting for the active channel
      CHANNEL = str2num(get(obj, 'HwName'));
      str = sprintf('V%d?', CHANNEL);
      fprintf(g, str);
      vset = fscanf(g, '%g');

      propertyValue = vset;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get the interface object.
      g = get(get(obj, 'Parent'), 'Interface');

      % get ActiveChannel
      CHANNEL = str2num(get(obj, 'HwName'));

      % Set the voltage setting for the active channel
      str = sprintf('V%d %g', CHANNEL, abs(propertyValue));
      fprintf(g, str);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method MeasCurrent
    MCode:
      function iout = MeasCurrent(obj, channel)
      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
      % get Interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % if channel is not given use the active channel
      % channel = get(obj, 'ActiveChannel');
      CHANNEL = str2num(get(obj, 'HwName'));

      % Measure Current.
      str = sprintf('I%dO?', CHANNEL);
      fprintf(g, str);
      iout = fscanf(g, '%g');

  Method MeasVoltage
    MCode:
      function vout = MeasVoltage(obj, channel)
      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
      % get Interface object.
      % g = get(obj, 'Interface');
      g = get(get(obj, 'Parent'), 'Interface');

      % if channel is not given use the active channel
      % channel = get(obj, 'ActiveChannel');
      CHANNEL = str2num(get(obj, 'HwName'));

      % Measure Voltage.
      str = sprintf('V%dO?', CHANNEL);
      fprintf(g, str);
      vout = fscanf(g, '%g');
