MATLABInstrumentDriver
FileVersion: 1.0
DriverName: C:\Program Files\MATLAB\R2006a\work\icontrol\agilent_66xxx_single.mdd
DriverType: MATLAB interface object
InstrumentType: Signal Generator
InstrumentManufacturer: TTi
InstrumentModel: TG5011
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: *ESE?

CreateInitCode
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
ConnectInitCode
  Code:
    function init(obj)
    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
    % get Interface object.
    g = get(obj, 'Interface');

    % Set the instrument in a known state.
    fprintf(g, '*RST');

CleanupCode
  Code:
    function cleanup(obj)
    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
    % get Interface object.
    g = get(obj, 'Interface');

    % Turn off Output.
    cmdstr = sprintf(':POW:STAT 0');
    fprintf(g, cmdstr);

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property AmplUnit
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % % Get interface object.
      % g = get(obj, 'Interface');
      %
      % % Get the amplitude unit
      % cmdstr = sprintf('AMPUNIT?');
      % fprintf(g, cmdstr);
      % propertyValue = fscanf(g);
      %
      % % operation complete?
      % cmdstr = sprintf('*OPC?');
      % fprintf(g,cmdstr);
      % fscanf(g);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % set amplitude unit
      cmdstr = sprintf('AMPUNIT %s', propertyValue);
      fprintf(g,cmdstr);

      % % operation complete?
      % cmdstr = sprintf('*OPC?');
      % fprintf(g,cmdstr);
      % fscanf(g);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Frequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % Get the frequency in Hz
      cmdstr = sprintf('FREQ?');
      fprintf(g, cmdstr);
      propertyValue = fscanf(g);

      % % operation complete?
      % cmdstr = sprintf('*OPC?');
      % fprintf(g,cmdstr);
      % fscanf(g);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % set frequency in Hz
      cmdstr = sprintf('FREQ %1.6f', propertyValue);
      fprintf(g,cmdstr);

      % % operation complete?
      % cmdstr = sprintf('*OPC?');
      % fprintf(g,cmdstr);
      % fscanf(g);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Output
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % Get the Output-state
      cmdstr = sprintf('OUTPUT?');
      fprintf(g, cmdstr);
      propertyValue = fscanf(g);

      % % operation complete?
      % cmdstr = sprintf('*OPC?');
      % fprintf(g,cmdstr);
      % fscanf(g);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      keyboard

      % Get interface object.
      g = get(obj, 'Interface');
      keyboard
      if isnumeric(propertyValue)
          switch propertyValue
              case 1
                  outp = 'ON';
              case 0
                  outp = 'OFF';
          end
      else
          outp = propertyValue;
      end
      keyboard
      % Set the Output-state
      cmdstr = sprintf('OUTPUT %s', outp);
      fprintf(g, cmdstr);
      keyboard
      % % operation complete?
      % cmdstr = sprintf('*OPC?');
      % fprintf(g,cmdstr);
      % fscanf(g);
    PermissibleType: Double enum [0.0, 1.0]
    DefaultValue: 0
    ReadOnly: never

  Property Power
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % Get the power in dBm
      cmdstr = sprintf('AMPL?');
      fprintf(g, cmdstr);
      propertyValue = fscanf(g);

      % % operation complete?
      % cmdstr = sprintf('*OPC?');
      % fprintf(g,cmdstr);
      % fscanf(g);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Get interface object.
      g = get(obj, 'Interface');

      % set source power in dBm
      cmdstr = sprintf('AMPL %d', propertyValue);
      fprintf(g,cmdstr);

      % % operation complete?
      % cmdstr = sprintf('*OPC?');
      % fprintf(g,cmdstr);
      % fscanf(g);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
